PsychoPy2experiment version="2022.2.1"
Settings
  Completed URL = www.sokolhessnerlab.com
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Incomplete URL = www.google.com
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1024, 576]
  color = $[-1,-1,-1]
  expName = CGTriskyDMtask
  keyboardBackend = ioHub
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Routines
  Routine instructions
    TextComponent Instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        As discussed in the instructions, you will choose between a gamble and a guaranteed alternative.

        Once "V-Left" and "N-Right" appear on the screen, you may press "V" to select the option on the left and "N" to choose the option on the right.

        Press "enter" to move on to the next screen.
    KeyboardComponent inst1
      allowedKeys = "return"
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine practiceTask
    CodeComponent randLoc
      Code Type = Both
      Begin JS Routine:
        if (loc==1) {
            targetPos=[-.4,0];
        } else {
            targetPos=[.4,0];
        }

        if (loc==1) {
            lossLoc=[-.4,-.2];
            gainLoc=[-.4,.2];
            safeLoc=[.4,0];
        } else {
            lossLoc=[.4,-.2];
            gainLoc=[.4,.2];
            safeLoc=[.4,0];
        }
      Begin Routine:
        if loc==1:
            targetPos=[-.4,0]
        else:
            targetPos=[.4,0]

        if loc==1:
            lossLoc=[-.4,-.1]
            gainLoc=[-.4,.1]
            safeLoc=[.4,0]
        else:
            lossLoc=[.4,-.1]
            gainLoc=[.4,.1]
            safeLoc=[-.4,0]
    PolygonComponent circleLeft
      fillColor = $[1,1,1]
      nVertices = 130
      pos = (-.4,0)
      shape = rectangle
      size = (.5, .5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
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    PolygonComponent circleRight
      fillColor [set every repeat] = $[1,1,1]
      lineColor [set every repeat] = $[1,1,1]
      nVertices = 130
      pos = (.4,0)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    PolygonComponent lineLeft
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 3
      pos [set every repeat] = targetPos
      shape = rectangle
      size = (0.5, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent orText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = OR
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    TextComponent lossTxt
      color = black
      letterHeight = 0.1
      pos [set every repeat] = lossLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text [set every repeat]:
        $riskyLoss
    TextComponent gainTxt
      color = black
      letterHeight = 0.1
      pos [set every repeat] = gainLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $riskyGain
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    TextComponent safeTxt
      color = black
      letterHeight = 0.1
      pos [set every repeat] = safeLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $alternative
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    TextComponent vLeft
      letterHeight = 0.05
      pos = (-.4, -.35)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      text = V-Left
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    TextComponent nRight
      letterHeight = 0.05
      pos = (.4, -.35)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      text = N-Right
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    KeyboardComponent choice1
      allowedKeys = 'v','n'
      forceEndRoutine = True
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
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  Routine pracStart
    TextComponent startPract
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        There will now be 5 practice trials.

        When you are ready to begin the practice, press "V" or "N".
    KeyboardComponent startPracResp
      allowedKeys = 'v','n'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine isiPrac
    TextComponent isiText
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $isi
      text = +
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  Routine feedback
    CodeComponent codeFeedback
      Code Type = Both
      Begin JS Routine:
        function random_item(items){ return items[Math.floor(Math.random()*items.length)];
        }

        if (choice1.keys != 'n' || choice1.keys !='v'){
            outcome = " ";
            noRespLoc = [0,0];
            ocLoc = [5,5];
            ocGambleLoc = [5,5];
            ocSafeLoc = [5,5];
            hideGamLoc = [5,5];
        }else if(choice1.keys =='v' && loc ==1) {
            outcome = random_items([riskyGain, riskyLoss])
            if(outcome == riskyGain){
                ocLoc = [-.4,.1];
                ocGambleLoc = [-.4,0];
                ocSafeLoc = [5,5];
                noRespLoc = [5,5];
                hideGamLoc = [-.4,-.125];
            } else if (outcome ==riskyLoss){
                ocLoc = [-.4,-.1];
                ocGambleLoc = [-.4,0];
                ocSafeLoc = [5,5];
                hideGamLoc = [-.4,.125];
                noRespLoc = [5,5];
            }
        } else if(choice1.keys == 'v' && loc ==2){
            outcome = alternative
            ocLoc = [-.4,0];
            ocGambleLoc = [5,5];
            ocSafeLoc = ocLoc;
            hideGamLoc = ocGambleLoc;
            noRespLoc = [5,5];
        } else if (choice1.keys=='n' && loc ==1){
            outcome = alternative
            ocLoc = [.4,0];
            ocGambleLoc = [5,5];
            ocSafeLoc = ocLoc;
            hideGamLoc = ocGambleLoc;
            noRespLoc = [5,5];
        } else if (choice1.keys =='n' && loc ==2){
            outcome = random_items([riskyGain, riskyLoss]);
            if (outcome == riskyGain){
                ocLoc = [.4,.1];
                ocGambleLoc = [.4,0];
                ocSafeLoc = [5,5];
                hideGamLoc = [.4,-.125];
                noRespLoc = [5,5];
            } else if (outcome == riskyLoss){
                ocLoc = [.4,-.1];
                ocGambleLoc = [.4,0];
                ocSafeLoc = [5,5];
                hideGamLoc = [.4,.125];
                noRespLoc = [5,5];
            }
        }
      Begin Routine:
        import random
        if not choice1.keys:
            outcome = " "
            noRespLoc = [0,0]
            ocLoc = [5,5]
            ocGambleLoc = [5,5]
            ocSafeLoc = [5,5]
            hideGamLoc = [5,5]
        elif choice1.keys == 'v' and loc == 1:
            outcome = random.choice([riskyGain, riskyLoss])
            if outcome == riskyGain:
                ocLoc = [-.4,.1]
                ocGambleLoc = [-.4,0]
                ocSafeLoc = [5,5]
                noRespLoc = [5,5]
                hideGamLoc = [-.4,-.125]
            elif outcome == riskyLoss:
                 ocLoc = [-.4,-.1]
                 ocGambleLoc = [-.4,0]
                 ocSafeLoc = [5,5]
                 hideGamLoc = [-.4,.125]
                 noRespLoc = [5,5]
        elif choice1.keys == 'v' and loc == 2:
            outcome = alternative
            ocLoc = [-.4,0]
            ocGambleLoc = [5,5]
            ocSafeLoc = ocLoc
            hideGamLoc = ocGambleLoc
            noRespLoc = [5,5]
        elif choice1.keys == 'n' and loc ==1:
            outcome = alternative
            ocLoc = [.4,0]
            ocGambleLoc = [5,5]
            ocSafeLoc = ocLoc
            hideGamLoc = ocGambleLoc
            noRespLoc = [5,5]
        elif choice1.keys == 'n' and loc ==2:
            outcome = random.choice([riskyGain, riskyLoss])
            if outcome == riskyGain:
                ocLoc = [.4,.1]
                ocGambleLoc = [.4,0]
                ocSafeLoc = [5,5]
                hideGamLoc = [.4,-.125]
                noRespLoc = [5,5]
            elif outcome == riskyLoss:
                ocLoc = [.4,-.1]
                ocGambleLoc = [.4,0]
                ocSafeLoc = [5,5]
                hideGamLoc = [.4,.125]
                noRespLoc = [5,5]
      End JS Routine:
        psychoJS.experiment.addData('outcome', outcome)
      End Routine:
        thisExp.addData('outcome', outcome)
    TextComponent noRespTxt
      letterHeight = 0.08
      pos [set every repeat] = noRespLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        You did not respond in time
    PolygonComponent ocGamble
      fillColor = $[1,1,1]
      nVertices = 130
      pos [set every repeat] = ocGambleLoc
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent ocSafe
      fillColor = $[1,1,1]
      nVertices = 130
      pos [set every repeat] = ocSafeLoc
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent outcomeText
      color [set every repeat] = black
      letterHeight = 0.1
      pos [set every repeat] = ocLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $outcome
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    PolygonComponent hideGamble
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      pos [set every repeat] = hideGamLoc
      shape = rectangle
      size = (0.6, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine itiPrac_2
    TextComponent itiText
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti
      text = +
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  Routine realTask
    CodeComponent randLoc_2
      Code Type = Auto->JS
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      Begin Routine:
        if loc==1:
            targetPos=[-.4,0]
        else:
            targetPos=[.4,0]

        if loc==1:
            lossLoc=[-.4,-.1]
            gainLoc=[-.4,.1]
            safeLoc=[.4,0]
        else:
            lossLoc=[.4,-.1]
            gainLoc=[.4,.1]
            safeLoc=[-.4,0]
    PolygonComponent circleLeftReal
      fillColor = $[1,1,1]
      nVertices = 130
      pos = (-.4,0)
      shape = rectangle
      size = (.5, .5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
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    PolygonComponent circleRightReal
      fillColor [set every repeat] = $[1,1,1]
      lineColor [set every repeat] = $[1,1,1]
      nVertices = 130
      pos = (.4,0)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    PolygonComponent lineLeftReal
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 3
      pos [set every repeat] = targetPos
      shape = rectangle
      size = (0.5, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent orTextReal
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = OR
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    TextComponent lossTxtReal
      color = black
      letterHeight = 0.1
      pos [set every repeat] = lossLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $riskyoption2
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    TextComponent gainTxtReal
      color = black
      letterHeight = 0.1
      pos [set every repeat] = gainLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $riskyoption1
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    TextComponent safeTxtReal
      color = black
      letterHeight = 0.1
      pos [set every repeat] = safeLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $safeoption
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    TextComponent vLeftReal
      letterHeight = 0.05
      pos = (-.4, -.35)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      text = V-Left
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    TextComponent nRightReal
      letterHeight = 0.05
      pos = (.4, -.35)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      text = N-Right
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    KeyboardComponent realChoice
      allowedKeys = 'v','n'
      forceEndRoutine = True
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
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    VariableComponent riskyGainGlobal
      saveStartRoutine = True
      startRoutineValue = riskyoption1
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    VariableComponent riskyLossGlobal
      saveStartRoutine = True
      startRoutineValue = riskyoption2
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    VariableComponent safeGlobal
      saveStartRoutine = True
      startRoutineValue = safeoption
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  Routine isiReal
    TextComponent isiTextReal
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $isi
      text = +
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  Routine feedbackReal
    CodeComponent codeFeedbackReal
      Code Type = Auto->JS
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      Begin Experiment:
        riskyGain = []
        riskyLoss = []
        safe = []
        choice = []
        outcome = []
      Begin Routine:
        import random
        import math
        if not realChoice.keys:
            realOutcome = math.nan
            choicetmp = math.nan
            noRespLoc = [0,0]
            ocLoc = [5,5]
            ocGambleLoc = [5,5]
            ocSafeLoc = [5,5]
            hideGamLoc = [5,5]
        elif realChoice.keys == 'v' and loc == 1:
            realOutcome = random.choice([riskyoption1, riskyoption2])
            choicetmp = 1
            if realOutcome == riskyoption1:
                ocLoc = [-.4,.1]
                ocGambleLoc = [-.4,0]
                ocSafeLoc = [5,5]
                noRespLoc = [5,5]
                hideGamLoc = [-.4,-.125]
            elif realOutcome == riskyoption2:
                 ocLoc = [-.4,-.1]
                 ocGambleLoc = [-.4,0]
                 ocSafeLoc = [5,5]
                 hideGamLoc = [-.4,.125]
                 noRespLoc = [5,5]
        elif realChoice.keys == 'v' and loc == 2:
            realOutcome = safeoption
            choicetmp = 0
            ocLoc = [-.4,0]
            ocGambleLoc = [5,5]
            ocSafeLoc = ocLoc
            hideGamLoc = ocGambleLoc
            noRespLoc = [5,5]
        elif realChoice.keys == 'n' and loc ==1:
            realOutcome = safeoption
            choicetmp = 0
            ocLoc = [.4,0]
            ocGambleLoc = [5,5]
            ocSafeLoc = ocLoc
            hideGamLoc = ocGambleLoc
            noRespLoc = [5,5]
        elif realChoice.keys == 'n' and loc ==2:
            realOutcome = random.choice([riskyoption1, riskyoption2])
            choicetmp = 1
            if realOutcome == riskyoption1:
                ocLoc = [.4,.1]
                ocGambleLoc = [.4,0]
                ocSafeLoc = [5,5]
                hideGamLoc = [.4,-.125]
                noRespLoc = [5,5]
            elif realOutcome == riskyoption2:
                ocLoc = [.4,-.1]
                ocGambleLoc = [.4,0]
                ocSafeLoc = [5,5]
                hideGamLoc = [.4,.125]
                noRespLoc = [5,5]

        #outcome.append(realOutcome)
        #choice.append(choicetmp)
        #riskyLoss.append(riskyoption2)
        #riskyGain.append(riskyoption1)
        #safe.append(safeoption)
      End Routine:
        thisExp.addData('realOutcome', realOutcome)
    TextComponent noRespTxtReal
      letterHeight = 0.08
      pos [set every repeat] = noRespLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        You did not respond in time
    PolygonComponent ocGambleReal
      fillColor = $[1,1,1]
      nVertices = 130
      pos [set every repeat] = ocGambleLoc
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent ocSafeReal
      fillColor = $[1,1,1]
      nVertices = 130
      pos [set every repeat] = ocSafeLoc
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent outcomeTextReal
      color [set every repeat] = black
      letterHeight = 0.1
      pos [set every repeat] = ocLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $realOutcome
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    PolygonComponent hideGambleReal
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      pos [set every repeat] = hideGamLoc
      shape = rectangle
      size = (0.6, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine itiReal
    TextComponent itiTextReal
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti
      text = +
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  Routine selectOutcome
    TextComponent text
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Task complete!

        Randomly selecting outcome...
    CodeComponent code
      Code Type = Both
      Begin Experiment:
        finiteOutcomes=[]
      Begin JS Routine:
        import * from random
        import * from math
        dat = psychoJS.experiment._trialsData
        function random_items(items){
          return items[Math.floor(Math.random()*items.length)];
        }
        oc2choose = dat.filter((trial) => (trial['realChoice.keys'] =='v' || trial['realChoice.keys'] =='n'));
        finiteOutcomes = oc2choose.map((trial) => trial['realOutcome']);
        outcome2payFull = random_items(finiteOutcomes);
        outcome2payScaled = outcome2payFull*.25;



        //wrapUpText = "Randomly selected outcome: $" + outcome2payFull + "\n\nYou will be paid an additional: $" + outcome2payScaled + "\n\nPress the 'space' bar when you are ready to proceed";

        //wrapUp.setText(wrapUpText);
      Begin Routine:
        #import random
        #random.choice(riskyGainGlobal) # this doesn't work because riskyGainGlobal has no value rn
        #outcome2payFull = random.choice(riskyGainGlobal)
      End JS Routine:
        psychoJS.experiment.addData("finiteOutcomes", finiteOutcomes);
        psychoJS.experiment.addData("outcome2payFull", outcome2payFull);
        psychoJS.experiment.addData("outcome2payScaled", outcome2payScaled);
      End Routine:
        thisExp.addData('finiteOutcomes', finiteOutcomes);
        thisExp.addData('outcome2payFull', outcome2payFull);
        thisExp.addData('outcome2payScaled', outcome2payScaled);
    VariableComponent outcomeToPay
      saveStartRoutine = True
      startRoutineValue = $outcome2payFull
      startVal [time (s)] = 2
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    TextComponent chooseOC
      letterHeight = 0.05
      startVal [time (s)] = 2
      text [set every repeat] = $outcomeToPay
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    KeyboardComponent exitResponse
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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  Routine showSelectedOutcome
    TextComponent wrapUp
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Randomly selected outcome from trial #

        The outcome on this trial was 555

        You will be paid 111

        When you are ready to exit, press enter.
    KeyboardComponent exitResp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine postPrac
    TextComponent postPracText
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Practice complete.

        When you are ready to start the real task, press "V" or "N".
    KeyboardComponent postPractResp
      allowedKeys = 'v','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine lossInstructions
    TextComponent lossInst
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        The next set of 20 trials will be identical to the previous trials, except:

        1) On each trial you will decide between a risky option with win
         and loss possible outcomes, and a guaranteed alternative of \$0.

        2) These will be hypothetical trials, meaning that you
         will not recieve the outcome from any of these trials.

        That said, we ask that you please make your
         choices as if the monetary amounts were real.

        When you are done, you will be redirected
         to the next task in this study.

        When you are ready to start, press "V" or "N".
    KeyboardComponent startLossResp
      allowedKeys = 'v','n'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine lossTask
    CodeComponent randLoc_3
      Code Type = Auto->JS
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      Begin Routine:
        if loc==1:
            targetPos=[-.4,0]
        else:
            targetPos=[.4,0]

        if loc==1:
            lossLoc=[-.4,-.1]
            gainLoc=[-.4,.1]
            safeLoc=[.4,0]
        else:
            lossLoc=[.4,-.1]
            gainLoc=[.4,.1]
            safeLoc=[-.4,0]
    PolygonComponent circleLeftReal_2
      fillColor = $[1,1,1]
      nVertices = 130
      pos = (-.4,0)
      shape = rectangle
      size = (.5, .5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
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    PolygonComponent circleRightReal_2
      fillColor [set every repeat] = $[1,1,1]
      lineColor [set every repeat] = $[1,1,1]
      nVertices = 130
      pos = (.4,0)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    PolygonComponent lineLeftReal_2
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 3
      pos [set every repeat] = targetPos
      shape = rectangle
      size = (0.5, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent orTextReal_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = OR
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    TextComponent lossTxtReal_2
      color = black
      letterHeight = 0.1
      pos [set every repeat] = lossLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $riskyLoss
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    TextComponent gainTxtReal_2
      color = black
      letterHeight = 0.1
      pos [set every repeat] = gainLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $riskyGain
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    TextComponent safeTxtReal_2
      color = black
      letterHeight = 0.1
      pos [set every repeat] = safeLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $alternative
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    TextComponent vLeftReal_2
      letterHeight = 0.05
      pos = (-.4, -.35)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      text = V-Left
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    TextComponent nRightReal_2
      letterHeight = 0.05
      pos = (.4, -.35)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      text = N-Right
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    KeyboardComponent realChoice_2
      allowedKeys = 'v','n'
      forceEndRoutine = True
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
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  Routine isiLoss
    TextComponent isiLossText
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $isi
      text = +
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  Routine feedbackLoss
    CodeComponent codeFeedbackReal_2
      Code Type = Both
      Begin JS Routine:
        function random_item(items){
        return items[Math.floor(Math.random()*items.length)];
        }

        if (realChoice.keys != 'n' || realChoice.keys !='v'){
            realOutcome = " ";
            noRespLoc = [0,0];
            ocLoc = [5,5];
            ocGambleLoc = [5,5];
            ocSafeLoc = [5,5];
            hideGamLoc = [5,5];
        }else if(realChoice.keys =='v' && loc ==1) {
            realOutcome = random_items([riskyGain, riskyLoss])
            if(realOutcome == riskyGain){
                ocLoc = [-.4,.1];
                ocGambleLoc = [-.4,0];
                ocSafeLoc = [5,5];
                noRespLoc = [5,5];
                hideGamLoc = [-.4,-.125];
            } else if (realOutcome ==riskyLoss){
                ocLoc = [-.4,-.1];
                ocGambleLoc = [-.4,0];
                ocSafeLoc = [5,5];
                hideGamLoc = [-.4,.125];
                noRespLoc = [5,5];
            }
        } else if(realChoice.keys == 'v' && loc ==2){
            realOutcome = alternative
            ocLoc = [-.4,0];
            ocGambleLoc = [5,5];
            ocSafeLoc = ocLoc;
            hideGamLoc = ocGambleLoc;
            noRespLoc = [5,5];
        } else if (realChoice.keys=='n' && loc ==1){
            realOutcome = alternative
            ocLoc = [.4,0];
            ocGambleLoc = [5,5];
            ocSafeLoc = ocLoc;
            hideGamLoc = ocGambleLoc;
            noRespLoc = [5,5];
        } else if (realChoice.keys =='n' && loc ==2){
            realOutcome = random_items([riskyGain, riskyLoss]);
            if (realOutcome == riskyGain){
                ocLoc = [.4,.1];
                ocGambleLoc = [.4,0];
                ocSafeLoc = [5,5];
                hideGamLoc = [.4,-.125];
                noRespLoc = [5,5];
            } else if (realOutcome == riskyLoss){
                ocLoc = [.4,-.1];
                ocGambleLoc = [.4,0];
                ocSafeLoc = [5,5];
                hideGamLoc = [.4,.125];
                noRespLoc = [5,5];
            }
        }
      Begin Routine:
        import random
        if not realChoice.keys:
            realOutcome = " "
            noRespLoc = [0,0]
            ocLoc = [5,5]
            ocGambleLoc = [5,5]
            ocSafeLoc = [5,5]
            hideGamLoc = [5,5]
        elif realChoice.keys == 'v' and loc == 1:
            realOutcome = random.choice([riskyGain, riskyLoss])
            if realOutcome == riskyGain:
                ocLoc = [-.4,.1]
                ocGambleLoc = [-.4,0]
                ocSafeLoc = [5,5]
                noRespLoc = [5,5]
                hideGamLoc = [-.4,-.125]
            elif realOutcome == riskyLoss:
                 ocLoc = [-.4,-.1]
                 ocGambleLoc = [-.4,0]
                 ocSafeLoc = [5,5]
                 hideGamLoc = [-.4,.125]
                 noRespLoc = [5,5]
        elif realChoice.keys == 'v' and loc == 2:
            realOutcome = alternative
            ocLoc = [-.4,0]
            ocGambleLoc = [5,5]
            ocSafeLoc = ocLoc
            hideGamLoc = ocGambleLoc
            noRespLoc = [5,5]
        elif realChoice.keys == 'n' and loc ==1:
            realOutcome = alternative
            ocLoc = [.4,0]
            ocGambleLoc = [5,5]
            ocSafeLoc = ocLoc
            hideGamLoc = ocGambleLoc
            noRespLoc = [5,5]
        elif realChoice.keys == 'n' and loc ==2:
            realOutcome = random.choice([riskyGain, riskyLoss])
            if realOutcome == riskyGain:
                ocLoc = [.4,.1]
                ocGambleLoc = [.4,0]
                ocSafeLoc = [5,5]
                hideGamLoc = [.4,-.125]
                noRespLoc = [5,5]
            elif realOutcome == riskyLoss:
                ocLoc = [.4,-.1]
                ocGambleLoc = [.4,0]
                ocSafeLoc = [5,5]
                hideGamLoc = [.4,.125]
                noRespLoc = [5,5]
      End JS Routine:
        psychoJS.experiment.addData('realOutcome', realOutcome)
      End Routine:
        thisExp.addData('realOutcome', realOutcome)
    TextComponent noRespTxtReal_2
      letterHeight = 0.08
      pos [set every repeat] = noRespLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        You did not respond in time
    PolygonComponent ocGambleReal_2
      fillColor = $[1,1,1]
      nVertices = 130
      pos [set every repeat] = ocGambleLoc
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent ocSafeReal_2
      fillColor = $[1,1,1]
      nVertices = 130
      pos [set every repeat] = ocSafeLoc
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent outcomeTextReal_2
      color [set every repeat] = black
      letterHeight = 0.1
      pos [set every repeat] = ocLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $realOutcome
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    PolygonComponent hideGambleReal_2
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      pos [set every repeat] = hideGamLoc
      shape = rectangle
      size = (0.6, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine itiLoss
    TextComponent itiTextReal_2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti
      text = +
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  Routine endOfTask
    TextComponent endRedirect
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        This part of the experiment is complete.

        You will be redirected in a few moments
         to the next part of the study.

        Thank you.
  Routine testVariable
    TextComponent showGain
      letterHeight = .1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = $riskyGainAmt
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  Routine computation
    TextComponent tmpDisp
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = $riskyGainGlobal
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Flow
  Routine instructions
  Routine pracStart
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = cgtPractice.xlsx
    loopType = sequential
    nReps = 0
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    conditions:
      [{'riskyGain': 18.23, 'riskyLoss': 0, 'alternative': 9.45, 'isi': 2, 'iti': 1, 'loc': 1},
      {'riskyGain': 53.27, 'riskyLoss': 0, 'alternative': 35.16, 'isi': 1, 'iti': 3, 'loc': 1},
      {'riskyGain': 8.27, 'riskyLoss': 0, 'alternative': 1.15, 'isi': 1, 'iti': 2, 'loc': 2},
      {'riskyGain': 45.88, 'riskyLoss': 0, 'alternative': 40.41, 'isi': 3, 'iti': 1, 'loc': 1},
      {'riskyGain': 21.56, 'riskyLoss': 0, 'alternative': 11.96, 'isi': 1, 'iti': 1, 'loc': 2}]
    Routine practiceTask
    Routine isiPrac
    Routine feedback
    Routine itiPrac_2
  LoopTerminator trials
  Routine postPrac
  LoopInitiator realTrials loopType="TrialHandler"
    Selected rows = 0:3
    conditionsFile = /Users/shlab/Documents/GitHub/cgt/choiceset/CGT-choice-set.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('riskyoption1', 20.026282300000002), ('riskyoption2', 0.0), ('safeoption', 1.986858849), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 28.21267135), ('riskyoption2', 0.0), ('safeoption', 3.893664324), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 17.731107), ('riskyoption2', 0.0), ('safeoption', 3.1344465), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 25.1991081), ('riskyoption2', 0.0), ('safeoption', 5.400445949), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 16.0), ('riskyoption2', 0.0), ('safeoption', 4.0), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 22.97154463), ('riskyoption2', 0.0), ('safeoption', 6.514227683), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 14.72428297), ('riskyoption2', 0.0), ('safeoption', 4.637858515), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 21.32063918), ('riskyoption2', 0.0), ('safeoption', 7.339680412000001), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 13.93995131), ('riskyoption2', 0.0), ('safeoption', 5.030024343), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 20.53116353), ('riskyoption2', 0.0), ('safeoption', 7.734418236000001), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 13.45404954), ('riskyoption2', 0.0), ('safeoption', 5.272975229), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 19.85676753), ('riskyoption2', 0.0), ('safeoption', 8.071616234), ('ischecktrial', 0)])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
    Routine realTask
    Routine isiReal
    Routine feedbackReal
    Routine itiReal
  LoopTerminator realTrials
  Routine selectOutcome
  Routine endOfTask
