PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = cogcontrolpractice
  keyboardBackend = ioHub
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Routines
  Routine CogConIns
    TextComponent CogIns
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Now you will particpate in a second task. In this portion you will try to memorize letters you see on the screen while you also solve simple math problems. In the next few minutes, you will have some practice to get you familiar with how the experiment works. We will begin by practicing the letter part of the experiment. Click the mouse to continue.
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    MouseComponent mouse_resp1
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 4.0
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    TextComponent PracIns
      letterHeight = 0.05
      startVal [time (s)] = 6.0
      text = For this practice set, letters will appear on the screen one at a time. Try to remember each letter in the order presented. After 2-3 letters have been shown, you will see a screen listing 12 possible letters with a check box beside each one. Your job is to select each letter in the order presented. To do this, use the mouse to select the box beside each letter. The letters you select will appear at the bottom of the screen. Click the mouse button to continue.
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    MouseComponent mouse_resp2
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 6.0
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    TextComponent PracIns2
      letterHeight = 0.05
      startVal [time (s)] = 9.0
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      text:
        When you have selected all the letters, and they are in the correct order, hit the ENTER box at the bottom right of the screen. If you make a mistake, hit the CLEAR box to start over. If you forget one of the letters, click the BLANK box to mark the spot for the missing letter. Remember, it is very important to get the letters in the same order as you see them. If you forget one, use the BLANK box to mark the position. Please ask the experimenter any questions you may have at this time. When you're ready, click the mouse button to start the letter practice.
    MouseComponent mouse_resp3
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 9.0
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  Routine MATH
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        hel;p
    TextComponent MathProb
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = (link to chioceset?)
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    TextComponent Ans
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      text = (alternate between right and wrong answers (ranomdly assing these?)
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    TextComponent TorF
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 4
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      text:
        True or False

        Press 'V' for True and 'N' for False
    KeyboardComponent T
      allowedKeys = 'v'
      forceEndRoutine = True
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
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    KeyboardComponent F
      allowedKeys = 'n'
      forceEndRoutine = True
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
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  Routine LetterPrac
    CodeComponent Rand_Letter
      Code Type = Both
      Begin Experiment:
        >>> import string
        >>> string.ascii_letters
        'FPQJHKTSNRYL'
        >>> import random
        >>> random.choice(string.ascii_letters)
        'F'
      Begin JS Experiment:
        /* Syntax Error: Fix Python code */
  Routine isiPrac
    TextComponent isiText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.250
      text = +
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  Routine itiPrac
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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  Routine LetterScore
    CodeComponent CompLetSc
      Code Type = Both
      Begin Experiment:
              'Compare each value of inputArray and correctArray to determine how many letters were
              'recalled correctly

              numbcorrect = 0
              count = 0

              endcount = cnt

              'score arrays
              Do
                If inputArray(count) = correctArray(count) Then
                  numbcorrect = numbcorrect + 1
                  count = count + 1
                Else
                  count = count + 1
                End If
              Loop Until count = cnt

              'calculate total number correct
              '	c.setattrib "SpanTotal", numbcorrect

              'Calculate "spanscore."  Credit equal to the setsize is given only if the entire set
              'is recalled correctly in serial order, as presented.  The trial is scored as a "0"
              'otherwise.  "Trialspan" is recorded in the list object and written to the data file.

              'if numbcorrect = cnt then
              '	c.setattrib "SpanScore", numbcorrect
              '	spnscr = spnscr + numbcorrect
              'else
              '	c.setattrib "SpanScore", 0
              'end if

              'keep a total count within the summation object
              'spansum.AddObservation numbcorrect
      Begin JS Experiment:
        /* Syntax Error: Fix Python code */
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.5
      text = You recalled ___ letters correctly out of ___ for 1500 ms.
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  Routine Blank1
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Recall
    TextComponent RecallIns
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Select the letters in the order presented. Use the blank button to fill in forgotten letters.
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  Routine Recall_2
Flow
  Routine CogConIns
  Routine Blank1
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = LETTERS.xlsx
    loopType = random
    nReps = 4
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    conditions:
      [{'F': 'P'},
      {'F': 'Q'},
      {'F': 'J'},
      {'F': 'H'},
      {'F': 'K'},
      {'F': 'T'},
      {'F': 'S'},
      {'F': 'N'},
      {'F': 'R'},
      {'F': 'Y'},
      {'F': 'L'}]
    Routine LetterPrac
    Routine isiPrac
    Routine itiPrac
    Routine Recall
    Routine LetterScore
    Routine itiPrac
    Routine MATH
  LoopTerminator trials
