PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = pracBOX
  keyboardBackend = ioHub
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Routines
  Routine Recall_Letters
    PolygonComponent PBox
      fillColor = white
      pos = (-0.25,0.15)
      shape = rectangle
      size = (0.10, 0.10)
      startVal [time (s)] = 0.0
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    PolygonComponent NBox
      fillColor = white
      pos = (.25, 0)
      shape = rectangle
      size = (0.10, 0.10)
      startVal [time (s)] = 0.0
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    PolygonComponent SBox
      fillColor = white
      pos = (-.25, 0)
      shape = rectangle
      size = (0.10, 0.10)
      startVal [time (s)] = 0.0
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    PolygonComponent KBox
      fillColor = white
      shape = rectangle
      size = (0.10, 0.10)
      startVal [time (s)] = 0.0
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    PolygonComponent HBox
      fillColor = white
      pos = (0.25,0.15)
      shape = rectangle
      size = (0.10, 0.10)
      startVal [time (s)] = 0.0
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    PolygonComponent FBox
      fillColor = white
      pos = (0,0.15)
      shape = rectangle
      size = (0.10, 0.10)
      startVal [time (s)] = 0.0
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    PolygonComponent QBox
      fillColor = white
      pos = (0, -0.15)
      shape = rectangle
      size = (0.10, 0.10)
      startVal [time (s)] = 0.0
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    PolygonComponent LBox
      fillColor = white
      pos = (-.25, -0.15)
      shape = rectangle
      size = (0.10, 0.10)
      startVal [time (s)] = 0.0
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    PolygonComponent RBox
      fillColor = white
      pos = (0.25,-0.15)
      shape = rectangle
      size = (0.10, 0.10)
      startVal [time (s)] = 0.0
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    PolygonComponent TBox
      fillColor = white
      pos = (0.25,-0.30)
      shape = rectangle
      size = (0.10, 0.10)
      startVal [time (s)] = 0.0
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    PolygonComponent YBox
      fillColor = white
      pos = (0.0, -0.30)
      shape = rectangle
      size = (0.10, 0.10)
      startVal [time (s)] = 0.0
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    PolygonComponent JBox
      fillColor = white
      pos = (-0.25,-0.30)
      shape = rectangle
      size = (0.10, 0.10)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        clicked_things = []
      Begin Routine:
        clicked_thinks = []


        waiting = False
      Each Frame:
        clickables = [FBox, KBox, PBox, SBox, HBox, LBox, QBox, TBox, JBox, NBox, RBox, YBox]

        #check if the mouse is pressed in any of the boxes
        for clickable in clickables:
            if mouse.isPressedIn(clickable):
                clicked_things.append(clickable.name)

        #change box to blue if clicked
        clickedN = 0
        for clickable in clickables:
            if clickable.name in clicked_things:
                clickable.color = 'blue'
                clickedN += 1

        if clickedN == 3 and not waiting:
            waiting = True
            startTime = t

        if clickedN == 3 and not waiting:
            if t > startTime + 0.05:
                continueRoutine = False
    TextComponent RecallINS
      letterHeight = 0.035
      pos = (0, .30)
      startVal [time (s)] = 0.0
      text = Select the letters in the order presented but pressing the corresponding keys on your keyboard. Use the space button to fill in forgotten letters.
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    TextComponent P
      color = black
      letterHeight = 0.05
      pos = (-.25,0.15)
      startVal [time (s)] = 0.0
      text = P
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    TextComponent F
      color = black
      letterHeight = 0.05
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text = F
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    TextComponent H
      color = black
      letterHeight = 0.05
      pos = (0.25, 0.15)
      startVal [time (s)] = 0.0
      text = H
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    TextComponent S
      color = black
      letterHeight = 0.05
      pos = (-0.25,0)
      startVal [time (s)] = 0.0
      text = S
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    TextComponent K
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = K
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    TextComponent N
      color = black
      letterHeight = 0.05
      pos = (0.25, 0)
      startVal [time (s)] = 0.0
      text = N
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    TextComponent L
      color = black
      letterHeight = 0.05
      pos = (-0.25, -0.15)
      startVal [time (s)] = 0.0
      text = L
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    TextComponent Q
      color = black
      letterHeight = 0.05
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      text = Q
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    TextComponent R
      color = black
      letterHeight = 0.05
      pos = (0.25,-0.15)
      startVal [time (s)] = 0.0
      text = R
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    TextComponent J
      color = black
      letterHeight = 0.05
      pos = (-.25, -.3)
      startVal [time (s)] = 0.0
      text = J
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    TextComponent Y
      color = black
      letterHeight = 0.05
      pos = (0,-0.3)
      startVal [time (s)] = 0.0
      text = Y
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    TextComponent T
      color = black
      letterHeight = 0.05
      pos = (0.25, -0.3)
      startVal [time (s)] = 0.0
      text = T
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Flow
  Routine Recall_Letters
