PsychoPy2experiment version="2022.2.1"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1120, 700]
  color = -1.0000, -1.0000, -1.0000
  expName = ospan
  keyboardBackend = ioHub
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Routines
  Routine LetterPrac
    CodeComponent Rand_Letter
      Code Type = Auto->JS
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      Begin Experiment:
        import random

        # set location of the boxes and text
        screensize = [1120,700]

        col1 = screensize[0]*-.3
        col2 = screensize[0]*-.1
        col3 = screensize[0]*.1
        row1 = screensize[1]*.3
        row2 = screensize[1]*.15
        row3 = screensize[1]*0
        row4 = screensize[1]*-.15

        specialBoxXaxis = screensize[0]*.4
        blankBoxLoc = [specialBoxXaxis,screensize[1]*.35]
        clearBoxLoc = [specialBoxXaxis, screensize[1]*0]
        enterBoxLoc = [specialBoxXaxis, screensize[1]*-.35]
        letterPractTextLoc = [0,screensize[1]*.4]

        boxSize = [90,90]
        specialBoxSize = [250,115]
        textHeight = 45
        boxTextHeight = 80
        wrap = screensize[0]*.9

        Fboxloc = [col1, row1]
        Hboxloc = [col2, row1]
        Jboxloc = [col3, row1]
        Kboxloc = [col1, row2]
        Lboxloc = [col2, row2]
        Nboxloc = [col3, row2]
        Pboxloc = [col1, row3]
        Qboxloc = [col2, row3]
        Rboxloc = [col3, row3]
        Sboxloc = [col1, row4]
        Tboxloc = [col2, row4]
        Yboxloc = [col3, row4]

        #practiceSetSize = [2,2,3,3]
        #practiceSetSize = random.choices(practiceSetSize, k=4)
        letters = ['F','K','P','S','H','L','Q','T','J','N', 'R', 'Y']
      Begin Routine:
        #import random
        #lettersShown = random.choices(letters,k=setSize,replace=False)
        tmpLetter = lettersShown[trials.thisN]
    TextComponent letterDisp
      letterHeight = boxTextHeight
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every frame] = $tmpLetter
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  Routine isiPrac
    TextComponent isiText
      letterHeight = textHeight
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.250
      text = +
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  Routine itiPrac
    TextComponent text_2
      letterHeight = textHeight
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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  Routine LetterScore
    CodeComponent scoring
      Code Type = Auto->JS
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      Begin Routine:
        correctCount = 0

        if len(clicked_things) >= setSize:
            for l in range(setSize):
                if clicked_things[l] == lettersShown[l]:
                    correctCount +=1
        elif len(clicked_things) ==0:
            correctCount = 0
        elif len(clicked_things)==1:
                if clicked_things[0] == lettersShown[0]:
                    correctCount +=1
      End Routine:
        thisExp.addData("correctCount", correctCount)
    TextComponent recallScore
      letterHeight = boxTextHeight
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      text [set every frame] = $"You recalled " + str(correctCount) + " letters correctly out of " + str(setSize)
      wrapWidth = wrap
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  Routine Blank1
    TextComponent blankText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine Recall
    TextComponent RecallIns
      letterHeight = 0.05
      pos = (500, -500)
      startVal [time (s)] = 0.0
      text = Select the letters in the order presented but pressing the corresponding keys on your keyboard. Use the space button to fill in forgotten letters.
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    KeyboardComponent key_resp
      allowedKeys = 'F','H','J','K','L','N','P','Q', 'R', 'Y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent KBox
      fillColor = white
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    PolygonComponent SBox
      fillColor = white
      pos = (0.5, 0)
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    PolygonComponent NBox
      fillColor = white
      pos = (-0.5, 0)
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    MouseComponent mouse1
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        clicked things = []
      Each Frame:
        clickables = [Kbox, SBox, NBox]

        #check if the mouse is pressed in any of the boxes
        For clickable in clickables:
            if mouse.isPressedIn(clickable):
                clicked_things.append(clickable.name)

        #change box to blue if clicked
        for clickable in clickables:
            if clickable.name in clicked_things:
                clickable.color = 'blue'
  Routine Recall_2
  Routine routine_1
  Routine TorF_2
  Routine TF
    PolygonComponent TrueBoxPractice
      fillColor = Green
      pos = (-200, 0)
      shape = rectangle
      size = (150, 100)
      startVal [time (s)] = 0.0
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    TextComponent TrueTextPractice
      color = black
      letterHeight = 0.05
      pos = (-200, 0)
      startVal [time (s)] = 0.0
      text = TRUE
      units = pix
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    PolygonComponent FalseBoxPractice
      fillColor = red
      pos = (200, 0)
      shape = rectangle
      size = (150, 100)
      startVal [time (s)] = 0.0
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    TextComponent FalseTextPractice
      color = black
      letterHeight = 0.05
      pos = (200, 0)
      startVal [time (s)] = 0.0
      text = FALSE
      units = pix
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    CodeComponent mathPracTFCode
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        mathClock = core.Clock()
      Begin Routine:
        mathTF_clickedThings = []
        timeAfterClick = 0

        mathClock.reset()
        t = mathClock.getTime()
      Each Frame:
        math_clickables = [TrueBoxPractice, FalseBoxPractice]

        #check if the mouse is pressed in any of the boxes
        for clickable in math_clickables: # for our shapes that can be clicked on
            if mouse2.isPressedIn(clickable) and t > timeAfterClick:
                timeAfterClick = t + .5
                mathTF_clickedThings.append(clickable.name) #add the name of the shape that was clicked
                mouse2.clickReset() #resets mouse click

        #change box to blue if clicked unless its the blank box
        # clickedN = 0
        for clickable in math_clickables:
            if clickable.name in mathTF_clickedThings:
                clickable.fillColor = 'grey'
      End Routine:
        thisExp.addData("mathTFreponse",  mathTF_clickedThings)
    MouseComponent mouse_2
      clickable = TrueBoxPractice
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine start
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = make text way you want it too look. have ti display on screen for 1 second or have it collect RT or something..... space. and it switches, start on basics!! add on bits and keep running it
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  Routine CogConIns2
    TextComponent CogInst2
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = For this practice set, letters will appear on the screen one at a time. Try to remember each letter in the order presented. After 2-3 letters have been shown, you will see a screen listing 12 possible letters with a check box beside each one. Your job is to select each letter in the order presented. To do this, use the mouse to select the box beside each letter. The letters you select will appear at the bottom of the screen. Click the mouse button to continue.
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    MouseComponent inst2Mouse
      disabled = True
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 4.0
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  Routine CogConIns1
    TextComponent CogInst1
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Now you will particpate in a second task. In this portion you will try to memorize letters you see on the screen while you also solve simple math problems. In the next few minutes, you will have some practice to get you familiar with how the experiment works. We will begin by practicing the letter part of the experiment. Click the mouse to continue.
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    MouseComponent inst1Mouse
      disabled = True
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 4.0
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  Routine CogConIns3
    TextComponent CogInst3
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Any text
        When you have selected all the letters, and they are in the correct order, hit the ENTER box at the bottom right of the screen. If you make a mistake, hit the CLEAR box to start over. If you forget one of the letters, click the BLANK box to mark the spot for the missing letter. Remember, it is very important to get the letters in the same order as you see them. If you forget one, use the BLANK box to mark the position. Please ask the experimenter any questions you may have at this time. When you're ready, click the mouse button to start the letter practice.
    MouseComponent inst3Mouse
      disabled = True
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 4.0
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  Routine MathPracIns2_2
  Routine MathPracIns3_2
  Routine MathPracIns3_3
  Routine Recall_Letters1
    CodeComponent stimuliLocationSize
      Code Type = Auto->JS
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      Begin Experiment:
        # set location of the boxes and text
        screensize = [1120,700]

        col1 = screensize[0]*-.3
        col2 = screensize[0]*-.1
        col3 = screensize[0]*.1
        row1 = screensize[1]*.2
        row2 = screensize[1]*.05
        row3 = screensize[1]*-.1
        row4 = screensize[1]*-.25

        specialBoxXaxis = screensize[0]*.35
        blankBoxLoc = [specialBoxXaxis,screensize[1]*.2]
        clearBoxLoc = [specialBoxXaxis, screensize[1]*0]
        enterBoxLoc = [specialBoxXaxis, screensize[1]*-.2]
        letterPractTextLoc = [0,screensize[1]*.4]

        boxSize = [90,90]
        specialBoxSize = [250,115]
        textHeight = 40
        boxTextHeight = 70
        wrap = screensize[0]*.9

        Fboxloc = [col1, row1]
        Hboxloc = [col2, row1]
        Jboxloc = [col3, row1]
        Kboxloc = [col1, row2]
        Lboxloc = [col2, row2]
        Nboxloc = [col3, row2]
        Pboxloc = [col1, row3]
        Qboxloc = [col2, row3]
        Rboxloc = [col3, row3]
        Sboxloc = [col1, row4]
        Tboxloc = [col2, row4]
        Yboxloc = [col3, row4]

        recallTextLoc = [col2,screensize[1]*-.4]
      Begin Routine:
        # set location of the boxes and text


        col1 = -200
        col2 = 0
        col3 = 200
        row1 = 200
        row2 = 100
        row3 = 0
        row4 = -100

        specialBoxXaxis = 275
        blankBoxLoc = [specialBoxXaxis,-175]
        clearBoxLoc = [specialBoxXaxis, 0]
        enterBoxLoc = [specialBoxXaxis, 175]

        boxSize = [80,80]
        specialBoxSize = [200,115]

        Fboxloc = [col1, row1]
        Hboxloc = [col2, row1]
        Jboxloc = [col3, row1]
        Kboxloc = [col1, row2]
        Lboxloc = [col2, row2]
        Nboxloc = [col3, row2]
        Pboxloc = [col1, row3]
        Qboxloc = [col2, row3]
        Rboxloc = [col3, row3]
        Sboxloc = [col1, row4]
        Tboxloc = [col2, row4]
        Yboxloc = [col3, row4]
    PolygonComponent P
      fillColor = white
      pos = Pboxloc
      shape = rectangle
      size = boxSize
      startVal [time (s)] = 0.0
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    PolygonComponent N
      fillColor = white
      pos = Nboxloc
      shape = rectangle
      size = boxSize
      startVal [time (s)] = 0.0
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    PolygonComponent S
      fillColor = white
      pos = Sboxloc
      shape = rectangle
      size = boxSize
      startVal [time (s)] = 0.0
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    PolygonComponent K
      fillColor = white
      pos = Kboxloc
      shape = rectangle
      size = boxSize
      startVal [time (s)] = 0.0
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    PolygonComponent H
      fillColor = white
      pos = Hboxloc
      shape = rectangle
      size = boxSize
      startVal [time (s)] = 0.0
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    PolygonComponent F
      fillColor = white
      pos = Fboxloc
      shape = rectangle
      size = boxSize
      startVal [time (s)] = 0.0
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    PolygonComponent Q
      fillColor = white
      pos = Qboxloc
      shape = rectangle
      size = boxSize
      startVal [time (s)] = 0.0
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    PolygonComponent L
      fillColor = white
      pos = Lboxloc
      shape = rectangle
      size = boxSize
      startVal [time (s)] = 0.0
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    PolygonComponent R
      fillColor = white
      pos = Rboxloc
      shape = rectangle
      size = boxSize
      startVal [time (s)] = 0.0
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    PolygonComponent T
      fillColor = white
      pos = Tboxloc
      shape = rectangle
      size = boxSize
      startVal [time (s)] = 0.0
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    PolygonComponent Y
      fillColor = white
      pos = Yboxloc
      shape = rectangle
      size = boxSize
      startVal [time (s)] = 0.0
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    PolygonComponent J
      fillColor = white
      pos = Jboxloc
      shape = rectangle
      size = boxSize
      startVal [time (s)] = 0.0
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    TextComponent letterPractText
      letterHeight = textHeight
      pos = letterPractTextLoc
      startVal [time (s)] = 0.0
      wrapWidth = wrap
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      text:
        Select the letters in the order presented.
        Use the blank button to fill in forgotten letters.
    TextComponent Ptext
      color = black
      letterHeight = boxTextHeight
      pos = Pboxloc
      startVal [time (s)] = 0.0
      text = P
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    TextComponent Ftext
      color = black
      letterHeight = boxTextHeight
      pos = Fboxloc
      startVal [time (s)] = 0.0
      text = F
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    TextComponent Htext
      color = black
      letterHeight = boxTextHeight
      pos = Hboxloc
      startVal [time (s)] = 0.0
      text = H
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    TextComponent Stext
      color = black
      letterHeight = boxTextHeight
      pos = Sboxloc
      startVal [time (s)] = 0.0
      text = S
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    TextComponent Ktext
      color = black
      letterHeight = boxTextHeight
      pos = Kboxloc
      startVal [time (s)] = 0.0
      text = K
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    TextComponent Ntext
      color = black
      letterHeight = boxTextHeight
      pos = Nboxloc
      startVal [time (s)] = 0.0
      text = N
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    TextComponent Ltext
      color = black
      letterHeight = boxTextHeight
      pos = Lboxloc
      startVal [time (s)] = 0.0
      text = L
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    TextComponent Qtext
      color = black
      letterHeight = boxTextHeight
      pos = Qboxloc
      startVal [time (s)] = 0.0
      text = Q
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    TextComponent Rtext
      color = black
      letterHeight = boxTextHeight
      pos = Rboxloc
      startVal [time (s)] = 0.0
      text = R
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    TextComponent Jtext
      color = black
      letterHeight = boxTextHeight
      pos = Jboxloc
      startVal [time (s)] = 0.0
      text = J
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    TextComponent Ytext
      color = black
      letterHeight = boxTextHeight
      pos = Yboxloc
      startVal [time (s)] = 0.0
      text = Y
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    TextComponent Ttext
      color = black
      letterHeight = boxTextHeight
      pos = Tboxloc
      startVal [time (s)] = 0.0
      text = T
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    PolygonComponent CLEAR
      fillColor = red
      pos = clearBoxLoc
      shape = rectangle
      size = specialBoxSize
      startVal [time (s)] = 0.0
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    TextComponent ClearText
      color = black
      letterHeight = boxTextHeight
      pos = clearBoxLoc
      startVal [time (s)] = 0.0
      text = CLEAR
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    PolygonComponent BLANK
      fillColor = white
      pos = blankBoxLoc
      shape = rectangle
      size = specialBoxSize
      startVal [time (s)] = 0.0
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    TextComponent BlankText
      color = Black
      letterHeight = boxTextHeight
      pos = blankBoxLoc
      startVal [time (s)] = 0.0
      text = BLANK
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    PolygonComponent ENTER
      fillColor = green
      pos = enterBoxLoc
      shape = rectangle
      size = specialBoxSize
      startVal [time (s)] = 0.0
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    TextComponent EnterText
      color = black
      letterHeight = boxTextHeight
      pos = enterBoxLoc
      startVal [time (s)] = 0.0
      text = ENTER
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    MouseComponent mouseLetters
      clickable = ENTER
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
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    CodeComponent mouserecall
      Code Type = Auto->JS
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      Begin Experiment:
        myClock = core.Clock()
      Begin Routine:
        clicked_things = []
        timeAfterClick = 0

        F.color = "white" #and then reset our shapes to have white boxes
        K.color = "white"
        P.color = "white"
        S.color = "white"
        H.color = "white"
        L.color = "white"
        Q.color = "white"
        T.color = "white"
        J.color = "white"
        N.color = "white"
        R.color = "white"
        Y.color = "white"

        myClock.reset()
        t = myClock.getTime()
      Each Frame:
        clickables = [F, K, P, S, H, L, Q, T, J, N, R, Y, BLANK, CLEAR]

        #check if the mouse is pressed in any of the boxes
        for clickable in clickables: # for our shapes that can be clicked on
            #timeAfterClick += 1
            if mouseLetters.isPressedIn(clickable) and t > timeAfterClick:
                timeAfterClick = t + .5
                clicked_things.append(clickable.name) #add the name of the shape that was clicked
                mouseLetters.clickReset() #resets mouse click

                if clickable == CLEAR: # if the clear button was pressed
                    clicked_things = [] # reset our clicked_thing variable
                    F.color = "white" #and then reset our shapes to have white boxes
                    K.color = "white"
                    P.color = "white"
                    S.color = "white"
                    H.color = "white"
                    L.color = "white"
                    Q.color = "white"
                    T.color = "white"
                    J.color = "white"
                    N.color = "white"
                    R.color = "white"
                    Y.color = "white"

        #change box to blue if clicked unless its the blank box
        # clickedN = 0
        for clickable in clickables:
            if clickable.name in clicked_things and not clickable.name == 'BLANK':
                clickable.color = 'blue'

        # prep the text that shows participant's responses (letters)
        responseText=''
        for l in range(len(clicked_things)):
              if clicked_things[l] == "BLANK":
                clicked_things[l] = "*"
              responseText = "%s %s " % (responseText, clicked_things[l])


        #print(timeAfterClick)
      End Routine:
        thisExp.addData("letterRecall", clicked_things)

        mouseLetters.clickReset()
    TextComponent showRecall
      color = yellow
      letterHeight = textHeight
      pos = recallTextLoc
      startVal [time (s)] = 0.0
      text [set every frame] = $responseText
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  Routine selectLetters
    CodeComponent selectLetters_2
      Code Type = Auto->JS
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      Begin Routine:
        lettersShown = [];

        while len(lettersShown) < setSize:
            singleLetter = random.choice(letters)

            if not singleLetter in lettersShown:
               lettersShown.append(singleLetter)
      End Routine:
        thisExp.addData('lettersShown', lettersShown)
  Routine selectMathProbs
    CodeComponent selectMathCode
      Code Type = Auto->JS
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      Begin Experiment:
        percrand =[1,1,1,1,1,2,2,2,2,2]
        mathCorr =[True,True,True,True,True,False, False, False, False,False]
        op2 = [1,2,3,4,5,6,7,8,9]
        sign = ["+","-"]
        sum2 = [1,2,3,4,5,6,7,8,9,-1,-2,-3,-4,-5,-6,-7,-8,-9]

        #mathPractCount = 0

        # set up some stimuli characteristics
        trueBoxSize = specialBoxSize
        falseBoxSize = specialBoxSize

        trueBoxLoc = [screensize[0]*-.25, screensize[1]*-.15]
        falseBoxLoc = [screensize[0]*.25, screensize[1]*-.15]
        mathProbAnsLoc = [0,screensize[1]*.2]
        clickMouseTextLoc = [0,screensize[1]*-.35]
      Begin Routine:
        import random

        tmpMathOp2 = str(random.choice(op2))
        tmpSign = random.choice(sign)
        suggestedAns = str(random.choice(sum2))
      End Routine:
        #mathPractCount +=1
        #if mathPractCount > 14:
        #    mathPracticeTrials.finished = True

        thisExp.addData("operation1", problem)
        thisExp.addData("sign", tmpSign)
        thisExp.addData("operation2",tmpMathOp2)
        thisExp.addData("suggestedAnswer", suggestedAns)
  Routine MathPracticeInst1
    TextComponent MathPracInst1
      disabled = True
      letterHeight = textHeight
      startVal [time (s)] = 0.0
      wrapWidth = wrap
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      text:
        Now you will practice doing the math part of the experiment.

        A math problem will appear on the screen, like this:
        (2 x 1) + 1 = ?

        As soon as you see the math problem, you should compute the correct answer.

        In the above problem, the answer 3 is correct. When you know the correct answer, you will click the mouse button.

        Click the mouse to continue.
    MouseComponent mathInstMouse1
      disabled = True
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 2.0
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  Routine MathPracticeInst2
    TextComponent MathPracInst2
      disabled = True
      letterHeight = textHeight
      startVal [time (s)] = 0.0
      wrapWidth = wrap
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      text:
        You will see a number displayed on the next screen, along with a box marked TRUE and a box marked FALSE.

        If the number on the screen is the correct answer to the math problem, click on the TRUE box with the mouse.

        If the number is not the correct answer, click on the FALSE box.

        For example, if you see the problem (2 x 2) + 1 = ? and the number on the following screen is 5 click the TRUE box, because the answer is correct.

        If you see the problem (2 x 2) + 1 = ? and the number on the next screen is 6 click the FALSE box, because the correct answer is 5, not 6.

        After you click on one of the boxes, the computer will tell you if you made the right choice.

        Click the mouse to continue.
    MouseComponent mathInstMouse2
      disabled = True
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 2.0
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  Routine MathPracticeInst3
    TextComponent MathPracInst3
      disabled = True
      letterHeight = textHeight
      startVal [time (s)] = 0.0
      wrapWidth = wrap
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      text:
        It is VERY important that you get the math problems correct.

        It is also important that you try and solve the problem as quickly as you can.

        Please ask the experimenter any questions you may have at this time.

        When you're ready, click the mouse to try some practice problems.
    MouseComponent mathInstMouse3
      disabled = True
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 2.0
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  Routine blankLong
    TextComponent blankLongText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine mathRespFeedback
    CodeComponent mathFeedbackCode
      Code Type = Auto->JS
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      Begin Experiment:
        isMathCorrect = [];
        mathFeedback = [];
        nTrials = 0
        nCorrect = 0
        mathCorrRespRTs = [];
        meanCorrect = [];
      Begin Routine:
        if clicked_things == ['falseBoxPractice']:
            falseColor="grey"
            trueColor="green"
        elif clicked_things == ["trueBoxPractice"]:
            trueColor="grey"
            falseColor="red"

        if correctRespPractice==True and clicked_things ==["trueBoxPractice"]:
           isMathCorrect = 1
           mathFeedback = "CORRECT"
        elif correctRespPractice==True and clicked_things==["falseBoxPractice"]:
           isMathCorrect = 0
           mathFeedback = "INCORRECT"
        elif correctRespPractice==False and clicked_things==["falseBoxPractice"]:
           isMathCorrect = 1
           mathFeedback = "CORRECT"
        elif correctRespPractice==False and clicked_things==["trueBoxPractice"]:
           isMathCorrect = 0
           mathFeedback = "INCORRECT"
      End Routine:
        if isMathCorrect:
            nTrials = nTrials + 1
            nCorrect = nCorrect + mathMousePractice.time[0]
            mathCorrRespRTs.append(mathMousePractice.time[0])
            meanCorrect = nCorrect/nTrials

        thisExp.addData('meanCorrect', meanCorrect)
        thisExp.addData("isMathCorrect",isMathCorrect)
        thisExp.addData("mathCorrRespRTs", mathCorrRespRTs)
    PolygonComponent trueBoxFeedback
      fillColor [set every frame] = $trueColor
      lineColor [set every frame] = $trueColor
      pos = trueBoxLoc
      shape = rectangle
      size = trueBoxSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    PolygonComponent falseBoxFeedback
      fillColor [set every frame] = $falseColor
      lineColor [set every frame] = $falseColor
      pos = falseBoxLoc
      shape = rectangle
      size = falseBoxSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    TextComponent trueTextFeedback
      letterHeight = textHeight
      pos = trueBoxLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = TRUE
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    TextComponent falseTextFeedback
      letterHeight = textHeight
      pos = falseBoxLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = FALSE
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    TextComponent suggestedAnswerFeedback
      letterHeight = boxTextHeight
      pos = mathProbAnsLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text [set every frame] = $suggestAnsPractice
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    TextComponent feedbackText
      color = blue
      letterHeight = boxTextHeight
      pos = feedbackTextLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text [set every frame] = $mathFeedback
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  Routine mathRespFeedback_2
  Routine showPracticeMath
    CodeComponent mathSetUpCode
      Code Type = Auto->JS
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      Begin Experiment:
        # set up some stimuli characteristics
        trueBoxSize = specialBoxSize
        falseBoxSize = specialBoxSize

        trueBoxLoc = [screensize[0]*-.25, screensize[1]*-.15]
        falseBoxLoc = [screensize[0]*.25, screensize[1]*-.15]

        feedbackTextLoc = [0, screensize[1]*-.4]

        mathProbAnsLoc = [0,screensize[1]*.2]

        clickMouseTextLoc = [0,screensize[1]*-.35]
      Begin Routine:
        #qMark = " = ?"
        #showMathProblem = "(" + problem + ")"  + " " + tmpSign + " " + tmpMathOp2 + " " + qMark
        #showMathProblem="hi"

        showMathProblem = problemPractice
    TextComponent showMathProblem_practice
      letterHeight = boxTextHeight
      pos = mathProbAnsLoc
      startVal [time (s)] = 0
      text [set every frame] = $showMathProblem
      wrapWidth = wrap
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    TextComponent clickMouseText
      letterHeight = textHeight
      pos = clickMouseTextLoc
      startVal [time (s)] = 0.0
      text = When you have solved the math problem, click the mouse to continue.
      wrapWidth = wrap
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    MouseComponent moustToTF_practice
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine showMath
    CodeComponent showMathCode
      Code Type = Auto->JS
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      Begin Routine:
        qMark = " = ?"
        showMathProblem = "(" + problem + ")"  + " " + tmpSign + " " + tmpMathOp2 + " " + qMark
    TextComponent showMathProblem2
      letterHeight = boxTextHeight
      pos = mathProbAnsLoc
      startVal [time (s)] = 0
      text [set every frame] = $showMathProblem
      wrapWidth = wrap
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    TextComponent textToContinue
      letterHeight = textHeight
      pos = clickMouseTextLoc
      startVal [time (s)] = 0.0
      text = Click the mouse to continue.
      wrapWidth = wrap
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    MouseComponent mouseToTF
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $maxMathWindow
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  Routine isiMath
    TextComponent isiPracMath2
      letterHeight = textHeight
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .200
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  Routine mathResp
    PolygonComponent trueBox
      fillColor = green
      lineColor = green
      pos = trueBoxLoc
      shape = rectangle
      size = trueBoxSize
      startVal [time (s)] = 0.0
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    PolygonComponent falseBox
      fillColor = red
      lineColor = red
      pos = falseBoxLoc
      shape = rectangle
      size = falseBoxSize
      startVal [time (s)] = 0.0
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    TextComponent trueText
      letterHeight = textHeight
      pos = trueBoxLoc
      startVal [time (s)] = 0.0
      text = TRUE
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    TextComponent falseText
      letterHeight = textHeight
      pos = falseBoxLoc
      startVal [time (s)] = 0.0
      text = FALSE
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    TextComponent suggestedAnswer
      letterHeight = boxTextHeight
      pos = mathProbAnsLoc
      startVal [time (s)] = 0.0
      text [set every frame] = $suggestedAns
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    MouseComponent mouseMathResponse
      clickable = trueBox, falseBox
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0
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    CodeComponent mathRespMouse
      Code Type = Auto->JS
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      Begin Experiment:
        mathClock = core.Clock()
        maxRespClock = core.Clock()
      Begin Routine:
        clicked_things = []
        timeAfterClick = 0

        trueBox.color = "green" #and then reset our shapes to have white boxes
        falseBox.color = "red"


        mathClock.reset()
        t = mathClock.getTime()

        #maxRespClock.reset()
      Each Frame:
        math_clickables = [trueBox, falseBox]

        #while maxRespClock.getTime() < maxMathWindow:
        #check if the mouse is pressed in any of the boxes
        for clickable in math_clickables: # for our shapes that can be clicked on
            #timeAfterClick += 1
            if mouseMathResponse.isPressedIn(clickable) and t > timeAfterClick:
                timeAfterClick = t + .5
                clicked_things.append(clickable.name) #add the name of the shape that was clicked
                clickable.color="grey"

        #change box to grey if clicked

        #for clickable in math_clickables:
        #    if clickable.name in clicked_things:
        #        clickable.color = 'grey'

        #
      End Routine:
        thisExp.addData("mathResponse", clicked_things)
  Routine mathResponsePractice
    PolygonComponent trueBoxPractice
      fillColor = green
      lineColor = green
      pos = trueBoxLoc
      shape = rectangle
      size = trueBoxSize
      startVal [time (s)] = 0.0
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    PolygonComponent falseBoxPractice
      fillColor = red
      lineColor = red
      pos = falseBoxLoc
      shape = rectangle
      size = falseBoxSize
      startVal [time (s)] = 0.0
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    TextComponent trueTextPractice
      letterHeight = textHeight
      pos = trueBoxLoc
      startVal [time (s)] = 0.0
      text = TRUE
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    TextComponent falseTextPractice
      letterHeight = textHeight
      pos = falseBoxLoc
      startVal [time (s)] = 0.0
      text = FALSE
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    TextComponent suggestedAnswerPractice
      letterHeight = boxTextHeight
      pos = mathProbAnsLoc
      startVal [time (s)] = 0.0
      text [set every frame] = $suggestAnsPractice
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    MouseComponent mathMousePractice
      clickable = trueBoxPractice, falseBoxPractice
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0
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    CodeComponent mathResponseCode
      Code Type = Auto->JS
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      Begin Experiment:
        mathClock = core.Clock()
      Begin Routine:
        clicked_things = []
        timeAfterClick = 0

        trueBoxPractice.color = "green" #and then reset our shapes to have white boxes
        falseBoxPractice.color = "red"


        mathClock.reset()
        t = mathClock.getTime()
      Each Frame:
        math_clickables = [trueBoxPractice, falseBoxPractice]

        #check if the mouse is pressed in any of the boxes
        for clickable in math_clickables: # for our shapes that can be clicked on
            #timeAfterClick += 1
            if mathMousePractice.isPressedIn(clickable) and t > timeAfterClick:
                timeAfterClick = t + .5
                clicked_things.append(clickable.name) #add the name of the shape that was clicked
                #mathMousePractice.clickReset() #resets mouse click
      End Routine:
        if clicked_things == ['trueBoxPractice']:
            mathTFresponse = 1
        elif clicked_things == ['falseBoxPractice']:
            mathTFresponse = 0


        thisExp.addData("mathResponse", mathTFresponse)
    VariableComponent mathRespRT
      disabled = True
      startRoutineValue = mathMousePractice.time
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  Routine mathRespGreyPractice
  Routine computeMathDisp
    CodeComponent mathMaxDispCode
      Code Type = Auto->JS
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      Begin Experiment:
        #meanDiff =[];
        #squaredMeanDiff = [];
        #sumSquaredMeanDiff = [];
        stdMathRT = [];
      Begin Routine:
        #for m in range(len(mathCorrRespRTs)):
        #   tmpMeanDiff = mathCorrRespRTs[m] - meanCorrect
        #   meanDiff.append(tmpMeanDiff)
        #   squaredMeanDiff.append(tmpMeanDiff*tmpMeanDiff)

        # compute the max amount of time a participant has to responde
        # to the math problem in the letter/math practice and real task.
        stdMathRT = std(mathCorrRespRTs)

        maxMathWindow = meanCorrect + (2.5* stdMathRT)
        if maxMathWindow <1.5:
            maxMathWindow ==1.5

        #sumSquaredMeanDiff = sum(squaredMeanDiff)

        #divisionStep = sumSquaredMeanDiff/len(mathCorrRespRTs)
      End Routine:
        #thisExp.addData("mathRTMeanDiff", meanDiff)
        #thisExp.addData("squaredMeanDiff", squaredMeanDiff)
        #thisExp.addData("sumSquaredMeanDiff",sumSquaredMeanDiff)
        thisExp.addData("stdMath", stdMathRT)
        thisExp.addData("maxMathWindow",maxMathWindow)
Flow
  Routine CogConIns1
  Routine CogConIns2
  Routine CogConIns3
  Routine Blank1
  LoopInitiator bigLetterLoop loopType="TrialHandler"
    conditionsFile = setSizeLetterPractice.xlsx
    loopType = random
    nReps = 0
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    conditions:
      [{'setSize': 2},
      {'setSize': 2},
      {'setSize': 3},
      {'setSize': 3}]
    Routine selectLetters
    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = setSize
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      Routine LetterPrac
      Routine isiPrac
      Routine itiPrac
    LoopTerminator trials
    LoopInitiator recall loopType="TrialHandler"
      Selected rows = 1
      loopType = random
      nReps = 1
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      Routine Recall_Letters1
      Routine LetterScore
    LoopTerminator recall
  LoopTerminator bigLetterLoop
  Routine MathPracticeInst1
  Routine MathPracticeInst2
  Routine MathPracticeInst3
  Routine blankLong
  LoopInitiator mathPracticeLoop loopType="TrialHandler"
    Selected rows = 0:4
    conditionsFile = practiceOperations.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'problemPractice': '(1x2) + 1 = ?', 'correctRespPractice': True, 'suggestAnsPractice': 3},
      {'problemPractice': '(1÷1) - 1 = ?', 'correctRespPractice': False, 'suggestAnsPractice': 2},
      {'problemPractice': '(7x3) - 3 = ?', 'correctRespPractice': True, 'suggestAnsPractice': 18},
      {'problemPractice': '(4x3) + 4 = ?', 'correctRespPractice': True, 'suggestAnsPractice': 16},
      {'problemPractice': '(3÷3) + 2 = ?', 'correctRespPractice': False, 'suggestAnsPractice': 1},
      {'problemPractice': '(2x6) - 4  = ?', 'correctRespPractice': False, 'suggestAnsPractice': 6},
      {'problemPractice': '(8x9) - 8 = ?', 'correctRespPractice': True, 'suggestAnsPractice': 64},
      {'problemPractice': '(4x5) - 5 = ?', 'correctRespPractice': False, 'suggestAnsPractice': 11},
      {'problemPractice': '(4x2) + 6 = ?', 'correctRespPractice': True, 'suggestAnsPractice': 14},
      {'problemPractice': '(4÷4) + 7 = ?', 'correctRespPractice': False, 'suggestAnsPractice': 12},
      {'problemPractice': '(8x2) - 8 = ? ', 'correctRespPractice': False, 'suggestAnsPractice': 2},
      {'problemPractice': '(2x9) - 9 = ?', 'correctRespPractice': True, 'suggestAnsPractice': 9},
      {'problemPractice': '(8÷2) + 9 = ?', 'correctRespPractice': False, 'suggestAnsPractice': 7},
      {'problemPractice': '(3x8) - 1 = ?', 'correctRespPractice': True, 'suggestAnsPractice': 23},
      {'problemPractice': '(6÷3) + 1 = ?', 'correctRespPractice': True, 'suggestAnsPractice': 3},
      {'problemPractice': '(9÷3) - 2 = ?', 'correctRespPractice': False, 'suggestAnsPractice': 7}]
    Routine showPracticeMath
    Routine isiMath
    Routine mathResponsePractice
    Routine mathRespFeedback
    Routine Blank1
  LoopTerminator mathPracticeLoop
  Routine computeMathDisp
  LoopInitiator lettersMathPracticeLoop loopType="TrialHandler"
    Selected rows = 0:4
    conditionsFile = operationSet1_noParen.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'weight': 1, 'problem': '1÷1', 'problemSum': 1, 'difficulty': 1},
      {'weight': 1, 'problem': '2÷1', 'problemSum': 2, 'difficulty': 1},
      {'weight': 1, 'problem': '2÷2', 'problemSum': 1, 'difficulty': 1},
      {'weight': 1, 'problem': '3÷1', 'problemSum': 3, 'difficulty': 1},
      {'weight': 1, 'problem': '3÷3', 'problemSum': 1, 'difficulty': 1},
      {'weight': 1, 'problem': '4÷1', 'problemSum': 4, 'difficulty': 1},
      {'weight': 1, 'problem': '4÷2', 'problemSum': 2, 'difficulty': 1},
      {'weight': 1, 'problem': '4÷4', 'problemSum': 1, 'difficulty': 1},
      {'weight': 1, 'problem': '5÷1', 'problemSum': 5, 'difficulty': 1},
      {'weight': 1, 'problem': '5÷5', 'problemSum': 1, 'difficulty': 1},
      {'weight': 1, 'problem': '6÷1', 'problemSum': 6, 'difficulty': 1},
      {'weight': 1, 'problem': '6÷2', 'problemSum': 3, 'difficulty': 1},
      {'weight': 1, 'problem': '6÷3', 'problemSum': 2, 'difficulty': 1},
      {'weight': 1, 'problem': '6÷6', 'problemSum': 1, 'difficulty': 1},
      {'weight': 1, 'problem': '7÷1', 'problemSum': 7, 'difficulty': 1},
      {'weight': 1, 'problem': '7÷7', 'problemSum': 1, 'difficulty': 1},
      {'weight': 1, 'problem': '8÷1', 'problemSum': 8, 'difficulty': 1},
      {'weight': 1, 'problem': '8÷2', 'problemSum': 4, 'difficulty': 1},
      {'weight': 1, 'problem': '8÷4', 'problemSum': 2, 'difficulty': 1},
      {'weight': 1, 'problem': '8÷8', 'problemSum': 1, 'difficulty': 1},
      {'weight': 1, 'problem': '9÷1', 'problemSum': 9, 'difficulty': 1},
      {'weight': 1, 'problem': '9÷3', 'problemSum': 3, 'difficulty': 1},
      {'weight': 1, 'problem': '9÷9', 'problemSum': 1, 'difficulty': 1}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
    Routine selectMathProbs
    Routine showMath
    Routine isiMath
    Routine mathResp
    Routine Blank1
  LoopTerminator lettersMathPracticeLoop
