PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1120, 700]
  expName = ospanANNA
  keyboardBackend = ioHub
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Routines
  Routine MATH
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        hel;p
    TextComponent MathProb
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = (link to chioceset?)
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    TextComponent Ans
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      text = (alternate between right and wrong answers (ranomdly assing these?)
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    TextComponent TorF
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 4
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      text:
        True or False

        Press 'V' for True and 'N' for False
    KeyboardComponent T
      allowedKeys = 'v'
      forceEndRoutine = True
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
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    KeyboardComponent F
      allowedKeys = 'n'
      forceEndRoutine = True
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
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  Routine LetterPrac
    CodeComponent Rand_Letter
      Code Type = Both
      Begin JS Experiment:
        /* Syntax Error: Fix Python code */
      Begin Routine:
        #import string
        #import random
        #string.ascii_letters
        #'FPQJHKTSNRYL'

        #random.choice(string.ascii_letters)
        #'F'
    TextComponent letterDisp
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every frame] = $letters
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  Routine isiPrac
    TextComponent isiText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.250
      text = +
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  Routine itiPrac
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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  Routine LetterScore
    CodeComponent CompLetSc
      Code Type = Both
      Begin JS Experiment:
        /* Syntax Error: Fix Python code */
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.5
      text = You recalled ___ letters correctly out of ___ for 1500 ms.
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  Routine Blank1
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine Recall
    TextComponent RecallIns
      letterHeight = 0.05
      pos = (500, -500)
      startVal [time (s)] = 0.0
      text = Select the letters in the order presented but pressing the corresponding keys on your keyboard. Use the space button to fill in forgotten letters.
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    KeyboardComponent key_resp
      allowedKeys = 'F','H','J','K','L','N','P','Q', 'R', 'Y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent KBox
      fillColor = white
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    PolygonComponent SBox
      fillColor = white
      pos = (0.5, 0)
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    PolygonComponent NBox
      fillColor = white
      pos = (-0.5, 0)
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    MouseComponent mouse1
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        clicked things = []
      Each Frame:
        clickables = [Kbox, SBox, NBox]

        #check if the mouse is pressed in any of the boxes
        For clickable in clickables:
            if mouse.isPressedIn(clickable):
                clicked_things.append(clickable.name)

        #change box to blue if clicked
        for clickable in clickables:
            if clickable.name in clicked_things:
                clickable.color = 'blue'
  Routine Recall_2
  Routine MathPracIns
    TextComponent MathPracIns1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Now you will practice doing the math part of the experiment. A math problem will appear on the screen, like this: (2 x 1) + 1 = ? As soon as you see the math problem, you should compute the correct answer. In the above problem, the answer 3 is correct. When you know the correct answer, you will click the mouse button. Click the mouse to continue.
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    MouseComponent mouse_1math
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 2.0
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  Routine routine_1
  Routine MathPrac
    CodeComponent MathProb
      Code Type = Auto->JS
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      Begin Routine:
        # show problem on screen call from 3 excel sheets
    TextComponent blank500
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    TextComponent ContIns
      letterHeight = 0.05
      startVal [time (s)] = 1
      text = When you have solved the math problem, click the mouse to continue.
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    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 1.4
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  Routine isiPracMath
    TextComponent isiPracMath2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .200
      text = +
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  Routine TorF_2
  Routine TF
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        #call right or wrong answer (some if then loop if correct maybe we need an excel sheet wiht the possible answers presented and true or false ? ( just maybe make it?) #randomize answers??
    PolygonComponent TrueBox
      fillColor = Green
      pos = (-200, 0)
      shape = rectangle
      size = (150, 100)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent TrueText
      color = black
      letterHeight = 0.05
      pos = (-200, 0)
      startVal [time (s)] = 0.0
      text = TRUE
      units = pix
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    PolygonComponent FalseBox
      fillColor = red
      pos = (200, 0)
      shape = rectangle
      size = (150, 100)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent FalseText
      color = black
      letterHeight = 0.05
      pos = (200, 0)
      startVal [time (s)] = 0.0
      text = FALSE
      units = pix
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    MouseComponent TFMouse
      clickable = TrueBox,FalseBox
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent tfmousecode
      Code Type = Auto->JS
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      Begin Experiment:
        #clicked_things = [TrueBox, FalseBox]
      Begin Routine:
        #clickables = [TrueBox, FalseBox]

        #check if the mouse is pressed in any of the boxes
        #for clickable in clickables: # for our shapes that can be clicked on
            #if mouse.isPressedIn(clickable): #if the mouse is clikced on one of the shapes
                #clicked_things.append(clickable.name) #add the name of the shape that was clicked
                #mouse.clickReset() #resets mouse click
                #clicked_things = [] # reset our clicked_thing variable
                #TrueBox.color = "white" #and then reset our shapes to have white boxes
                #FalseBox.color = "white"

        #change box to blue if clicked unless its the blank box

        #for clickable in clickables:
            #if clickable.name in clicked_things:
                #clickable.color = 'blue'
  Routine start
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = make text way you want it too look. have ti display on screen for 1 second or have it collect RT or something..... space. and it switches, start on basics!! add on bits and keep running it
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  Routine CogConIns2
    TextComponent CogIns2
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = For this practice set, letters will appear on the screen one at a time. Try to remember each letter in the order presented. After 2-3 letters have been shown, you will see a screen listing 12 possible letters with a check box beside each one. Your job is to select each letter in the order presented. To do this, use the mouse to select the box beside each letter. The letters you select will appear at the bottom of the screen. Click the mouse button to continue.
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    MouseComponent mouse_respo2
      disabled = True
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 4.0
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  Routine CogConIns1
    TextComponent CogIns
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Now you will particpate in a second task. In this portion you will try to memorize letters you see on the screen while you also solve simple math problems. In the next few minutes, you will have some practice to get you familiar with how the experiment works. We will begin by practicing the letter part of the experiment. Click the mouse to continue.
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    MouseComponent mouse_resp1
      disabled = True
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 4.0
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  Routine CogConIns3
    TextComponent text_5
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Any text
        When you have selected all the letters, and they are in the correct order, hit the ENTER box at the bottom right of the screen. If you make a mistake, hit the CLEAR box to start over. If you forget one of the letters, click the BLANK box to mark the spot for the missing letter. Remember, it is very important to get the letters in the same order as you see them. If you forget one, use the BLANK box to mark the position. Please ask the experimenter any questions you may have at this time. When you're ready, click the mouse button to start the letter practice.
    MouseComponent mouse_3
      disabled = True
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 4.0
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  Routine MathPracIns2_2
  Routine MathPracIns3_2
  Routine MathPracIns2
    TextComponent MathInsPrac2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = You will see a number displayed on the next screen, along with a box marked TRUE and a box marked FALSE. If the number on the screen is the correct answer to the math problem, click on the TRUE box with the mouse. If the number is not the correct answer, click on the FALSE box. For example, if you see the problem (2 x 2) + 1 = ? and the number on the following screen is 5 click the TRUE box, because the answer is correct. If you see the problem (2 x 2) + 1 = ? and the number on the next screen is 6 click the FALSE box, because the correct answer is 5, not 6. After you click on one of the boxes, the computer will tell you if you made the right choice. Click the mouse to continue.
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    MouseComponent mouse2_math
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 2.0
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  Routine MathPracIns3_3
  Routine MathPrac3
    TextComponent PracMathIns3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = It is VERY important that you get the math problems correct. It is also important that you try and solve the problem as quickly as you can. Please ask the experimenter any questions you may have at this time. When you're ready, click the mouse to try some practice problems.
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    MouseComponent mouse_math3
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 2.0
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  Routine Recall_Letters1
    CodeComponent stimuliLocationSize
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        # set location of the boxes and text


        col1 = -200
        col2 = 0
        col3 = 200
        row1 = 200
        row2 = 100
        row3 = 0
        row4 = -100

        specialBoxXaxis = 275
        blankBoxLoc = [specialBoxXaxis,-175]
        clearBoxLoc = [specialBoxXaxis, 0]
        enterBoxLoc = [specialBoxXaxis, 175]

        boxSize = [80,80]
        specialBoxSize = [200,115]

        Fboxloc = [col1, row1]
        Hboxloc = [col2, row1]
        Jboxloc = [col3, row1]
        Kboxloc = [col1, row2]
        Lboxloc = [col2, row2]
        Nboxloc = [col3, row2]
        Pboxloc = [col1, row3]
        Qboxloc = [col2, row3]
        Rboxloc = [col3, row3]
        Sboxloc = [col1, row4]
        Tboxloc = [col2, row4]
        Yboxloc = [col3, row4]
      Begin Routine:
        # set location of the boxes and text


        col1 = -200
        col2 = 0
        col3 = 200
        row1 = 200
        row2 = 100
        row3 = 0
        row4 = -100

        specialBoxXaxis = 275
        blankBoxLoc = [specialBoxXaxis,-175]
        clearBoxLoc = [specialBoxXaxis, 0]
        enterBoxLoc = [specialBoxXaxis, 175]

        boxSize = [80,80]
        specialBoxSize = [200,115]

        Fboxloc = [col1, row1]
        Hboxloc = [col2, row1]
        Jboxloc = [col3, row1]
        Kboxloc = [col1, row2]
        Lboxloc = [col2, row2]
        Nboxloc = [col3, row2]
        Pboxloc = [col1, row3]
        Qboxloc = [col2, row3]
        Rboxloc = [col3, row3]
        Sboxloc = [col1, row4]
        Tboxloc = [col2, row4]
        Yboxloc = [col3, row4]
    PolygonComponent PBox
      disabled = True
      fillColor = white
      pos = Pboxloc
      shape = rectangle
      size = boxSize
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent NBox2
      disabled = True
      fillColor = white
      pos = Nboxloc
      shape = rectangle
      size = boxSize
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent SBox2
      disabled = True
      fillColor = white
      pos = Sboxloc
      shape = rectangle
      size = boxSize
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent KBox2
      disabled = True
      fillColor = white
      pos = Kboxloc
      shape = rectangle
      size = boxSize
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent HBox
      disabled = True
      fillColor = white
      pos = Hboxloc
      shape = rectangle
      size = boxSize
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent FBox
      disabled = True
      fillColor = white
      pos = Fboxloc
      shape = rectangle
      size = boxSize
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent QBox
      disabled = True
      fillColor = white
      pos = Qboxloc
      shape = rectangle
      size = boxSize
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent LBox
      disabled = True
      fillColor = white
      pos = Lboxloc
      shape = rectangle
      size = boxSize
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent RBox
      disabled = True
      fillColor = white
      pos = Rboxloc
      shape = rectangle
      size = boxSize
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent TBox
      disabled = True
      fillColor = white
      pos = Tboxloc
      shape = rectangle
      size = boxSize
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent YBox
      disabled = True
      fillColor = white
      pos = Yboxloc
      shape = rectangle
      size = boxSize
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent JBox
      disabled = True
      fillColor = white
      pos = Jboxloc
      shape = rectangle
      size = boxSize
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent RecallINS
      disabled = True
      letterHeight = 0.035
      pos = (0, .30)
      startVal [time (s)] = 0.0
      text = Select the letters in the order presented but pressing the corresponding keys on your keyboard. Use the space button to fill in forgotten letters.
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    TextComponent P
      color = black
      disabled = True
      letterHeight = 0.05
      pos = Pboxloc
      startVal [time (s)] = 0.0
      text = P
      units = pix
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    TextComponent F_2
      color = black
      disabled = True
      letterHeight = 0.05
      pos = Fboxloc
      startVal [time (s)] = 0.0
      text = F
      units = pix
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    TextComponent H
      color = black
      disabled = True
      letterHeight = 0.05
      pos = Hboxloc
      startVal [time (s)] = 0.0
      text = H
      units = pix
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    TextComponent S
      color = black
      disabled = True
      letterHeight = 0.05
      pos = Sboxloc
      startVal [time (s)] = 0.0
      text = S
      units = pix
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    TextComponent K
      color = black
      disabled = True
      letterHeight = 0.05
      pos = Kboxloc
      startVal [time (s)] = 0.0
      text = K
      units = pix
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    TextComponent N
      color = black
      disabled = True
      letterHeight = 0.05
      pos = Nboxloc
      startVal [time (s)] = 0.0
      text = N
      units = pix
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    TextComponent L
      color = black
      disabled = True
      letterHeight = 0.05
      pos = Lboxloc
      startVal [time (s)] = 0.0
      text = L
      units = pix
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    TextComponent Q
      color = black
      disabled = True
      letterHeight = 0.05
      pos = Qboxloc
      startVal [time (s)] = 0.0
      text = Q
      units = pix
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    TextComponent R
      color = black
      disabled = True
      letterHeight = 0.05
      pos = Rboxloc
      startVal [time (s)] = 0.0
      text = R
      units = pix
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    TextComponent J
      color = black
      disabled = True
      letterHeight = 0.05
      pos = Jboxloc
      startVal [time (s)] = 0.0
      text = J
      units = pix
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    TextComponent Y
      color = black
      disabled = True
      letterHeight = 0.05
      pos = Yboxloc
      startVal [time (s)] = 0.0
      text = Y
      units = pix
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    TextComponent T_2
      color = black
      disabled = True
      letterHeight = 0.05
      pos = Tboxloc
      startVal [time (s)] = 0.0
      text = T
      units = pix
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    PolygonComponent CLEAR
      disabled = True
      fillColor = red
      pos = clearBoxLoc
      shape = rectangle
      size = specialBoxSize
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent ClearText
      color = black
      disabled = True
      letterHeight = 0.05
      pos = clearBoxLoc
      startVal [time (s)] = 0.0
      text = CLEAR
      units = pix
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    PolygonComponent BLANK
      disabled = True
      fillColor = white
      pos = blankBoxLoc
      shape = rectangle
      size = specialBoxSize
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent BlankText
      color = Black
      disabled = True
      letterHeight = 0.05
      pos = blankBoxLoc
      startVal [time (s)] = 0.0
      text = BLANK
      units = pix
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    PolygonComponent ENTER
      disabled = True
      fillColor = green
      pos = enterBoxLoc
      shape = rectangle
      size = specialBoxSize
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent EnterText
      color = black
      disabled = True
      letterHeight = 0.05
      pos = enterBoxLoc
      startVal [time (s)] = 0.0
      text = ENTER
      units = pix
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    MouseComponent mouse
      clickable = ENTER
      disabled = True
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent mouserecall
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        clicked_things = []
      Each Frame:
        clickables = [FBox, KBox2, PBox, SBox2, HBox, LBox, QBox, TBox, JBox, NBox2, RBox, YBox, BLANK, CLEAR]

        #check if the mouse is pressed in any of the boxes
        for clickable in clickables: # for our shapes that can be clicked on
            if mouse.isPressedIn(clickable): #if the mouse is clikced on one of the shapes
                clicked_things.append(clickable.name) #add the name of the shape that was clicked
                mouse.clickReset() #resets mouse click
                if clickable == CLEAR: # if the clear button was pressed
                    clicked_things = [] # reset our clicked_thing variable
                    FBox.color = "white" #and then reset our shapes to have white boxes
                    KBox2.color = "white"
                    PBox.color = "white"
                    SBox2.color = "white"
                    HBox.color = "white"
                    LBox.color = "white"
                    QBox.color = "white"
                    TBox.color = "white"
                    JBox.color = "white"
                    NBox2.color = "white"
                    RBox.color = "white"
                    YBox.color = "white"

        #change box to blue if clicked unless its the blank box
        # clickedN = 0
        for clickable in clickables:
            if clickable.name in clicked_things and not clickable.name == BLANK:
                clickable.color = 'blue'

         #clickedN += 1


        if mouse.isPressedIn(ENTER):
            continueRoutine=False

        #if clickedN == 3 and not waiting:
        #    waiting = True
        #    startTime = t

        #if clickedN == 3 and not waiting:
        #    if t > startTime + 0.05:
        #        continueRoutine = False
Flow
  Routine CogConIns1
  Routine CogConIns2
  Routine CogConIns3
  Routine Blank1
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 1
    conditionsFile = practiceletters.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'letters': "F'"},
      {'letters': "K'"},
      {'letters': "P'"},
      {'letters': "S'"},
      {'letters': "H'"},
      {'letters': "L'"},
      {'letters': "Q'"},
      {'letters': "T'"},
      {'letters': "J'"},
      {'letters': "N'"},
      {'letters': "R'"},
      {'letters': "Y'"}]
    Routine LetterPrac
    Routine isiPrac
    Routine itiPrac
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    Selected rows = 1
    loopType = random
    nReps = 1
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    Routine Recall_Letters1
    Routine LetterScore
  LoopTerminator trials_2
  Routine MathPracIns
  Routine MathPracIns2
  Routine MathPrac3
  Routine Blank1
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine MathPrac
    Routine isiPracMath
    Routine TF
  LoopTerminator trials_3
