PsychoPy2experiment version="2022.2.1"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = digitSpan_shlab
  keyboardBackend = ioHub
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Routines
  Routine selectNumbers
    CodeComponent selectNumbersFS
      Code Type = Auto->JS
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      Begin Experiment:
        numbersToChoose = [1,2,3,4,5,6,7,8,9];
        minDigitFS = 3;
        maxDigitFS = 16;
        #minDigitBS = 2;
        #maxDigitBS = 15;
        nTrialsFS = 0;
        #nTrialsBS = 0;
        correct = [];
        incorrectCount = 0;
      Begin Routine:
        import random

        nTrialsFS += 1;

        # set the digit span, always starts at 3 for nTrial =1
        # if correct, go up one
        # if incorrect (once) stay the same
        # if incorrect (twice) go down one
        if correct == 0:
            incorrectCount += 1

        if nTrialsFS ==1:
            digitSpan = minDigitFS
        else:
            if correct ==1:
                digitSpan = digitSpan + 1
                incorrectCount = 0;
            elif correct ==0 and incorrectCount <2:
                digitSpan = digitSpan
            elif correct ==0 and incorrectCount ==2:
                digitSpan = digitSpan-1
                incorrectCount = 0;

        if digitSpan < minDigitFS:
            digitSpan = minDigitFS

        digitsForTrial = [];

        while len(digitsForTrial) < digitSpan:
            if digitSpan <= 9:
                singleNumber = random.choice(numbersToChoose)
                if digitsForTrial.count(singleNumber) < 1:
                    digitsForTrial.append(singleNumber)
            elif digitSpan > 9:
                 singleNumber = random.choice(numbersToChoose)

                 if len(digitsForTrial) < 9 and digitsForTrial.count(singleNumber)==0:
                     digitsForTrial.append(singleNumber)

                 if len(digitsForTrial) >= 9 and digitsForTrial.count(singleNumber)<2:
                     digitsForTrial.append(singleNumber)

        # check that there is not more than two consecutive numbers (e.g. 1-2-3)
        checkingNumbers = True
        startN = 1
        endN = len(digitsForTrial)-1
        while checkingNumbers:
            for n in range(startN,endN):
                if digitsForTrial[n] == digitsForTrial[n-1] + 1 and digitsForTrial[n] == digitsForTrial[n+1] -1:
                    tmpFirst = digitsForTrial[n]
                    tmpSecond = digitsForTrial[n-1]
                    digitsForTrial[n] = tmpSecond
                    digitsForTrial[n-1] = tmpFirst

                if digitsForTrial[n] == digitsForTrial[n-1] - 1 and digitsForTrial[n] == digitsForTrial[n+1] +1:
                    tmpFirst = digitsForTrial[n]
                    tmpSecond = digitsForTrial[n-1]
                    digitsForTrial[n] = tmpSecond
                    digitsForTrial[n-1] = tmpFirst

            checkingNumbers = False
        # if there are three consecutive numbers, swap the first and second numbers in the series
  Routine showNumbers
    CodeComponent getTmpNumberCodeFS
      Code Type = Auto->JS
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      Begin Routine:
        tmpNumber = digitsForTrial[digitLoop.thisN]
      End Routine:
        thisExp.addData("digitsForTrial",digitsForTrial)
    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent presentation_text
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text [set every repeat] = $tmpNumber
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  Routine Recall
    TextComponent recall_txt
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Recall
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.1
      size = (None, None)
      startVal [time (s)] = 0.0
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    ImageComponent cont_button
      image = continue.png
      pos = (0, -.4)
      size = (0.3, 0.07)
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      End Routine:
        for r in range(len(digitsForTrial)):
            digitsForTrial[r] = str(digitsForTrial[r])

        digitsForTrial = ''.join(digitsForTrial)

        if textbox.text == str(digitsForTrial):
            correct = 1
            fbTxt = 'Correct!'
        else:
            correct = 0
            fbTxt = 'Incorrect'
        thisExp.addData('correct', correct)
    MouseComponent mouse
      clickable = cont_button
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent JScode
      Code Type = JS
      Begin JS Routine:
        // this is a temporary fix to allow editable textbox to be used on several trials
        textbox.refresh()
  Routine Feedback
    TextComponent feedback_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $fbTxt
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  Routine selectNumbersBS
    CodeComponent selectNumbersBScode
      Code Type = Auto->JS
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      Begin Experiment:
        numbersToChoose = [1,2,3,4,5,6,7,8,9];
        minDigitBS = 2;
        maxDigitBS = 15;
        nTrialsBS = 0;
        correct = [];
        incorrectCount = 0;
      Begin Routine:
        import random

        nTrialsBS += 1;

        # set the digit span, always starts at 3 for nTrial =1
        # if correct, go up one
        # if incorrect (once) stay the same
        # if incorrect (twice) go down one
        if correct == 0:
            incorrectCount += 1

        if nTrialsBS ==1:
            correct = [];
            digitSpan = minDigitBS
        else:
            if correct ==1:
                digitSpan = digitSpan + 1
                incorrectCount = 0;
            elif correct ==0 and incorrectCount <2:
                digitSpan = digitSpan
            elif correct ==0 and incorrectCount ==2:
                digitSpan = digitSpan-1
                incorrectCount = 0;

        if digitSpan < minDigitBS:
            digitSpan = minDigitBS

        digitsForTrial = [];

        while len(digitsForTrial) < digitSpan:
            if digitSpan <= 9:
                singleNumber = random.choice(numbersToChoose)
                if digitsForTrial.count(singleNumber) < 1:
                    digitsForTrial.append(singleNumber)
            elif digitSpan > 9:
                 singleNumber = random.choice(numbersToChoose)

                 if len(digitsForTrial) < 9 and digitsForTrial.count(singleNumber)==0:
                     digitsForTrial.append(singleNumber)

                 if len(digitsForTrial) >= 9 and digitsForTrial.count(singleNumber)<2:
                     digitsForTrial.append(singleNumber)

        # check that there is not more than two consecutive numbers (e.g. 1-2-3)
        checkingNumbers = True
        startN = 1
        endN = len(digitsForTrial)-1
        while checkingNumbers:
            for n in range(startN,endN):
                if digitsForTrial[n] == digitsForTrial[n-1] + 1 and digitsForTrial[n] == digitsForTrial[n+1] -1:
                    tmpFirst = digitsForTrial[n]
                    tmpSecond = digitsForTrial[n-1]
                    digitsForTrial[n] = tmpSecond
                    digitsForTrial[n-1] = tmpFirst

                if digitsForTrial[n] == digitsForTrial[n-1] - 1 and digitsForTrial[n] == digitsForTrial[n+1] +1:
                    tmpFirst = digitsForTrial[n]
                    tmpSecond = digitsForTrial[n-1]
                    digitsForTrial[n] = tmpSecond
                    digitsForTrial[n-1] = tmpFirst

            checkingNumbers = False
        # if there are three consecutive numbers, swap the first and second numbers in the series
  Routine showNumbersBS
    CodeComponent getTmpNumberCodeBS
      Code Type = Auto->JS
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      Begin Routine:
        tmpNumber = digitsForTrial[digitLoopBS.thisN]
      End Routine:
        thisExp.addData("digitsForTrial",digitsForTrial)
    TextComponent fixationBS
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent presentation_textBS
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text [set every repeat] = $tmpNumber
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  Routine RecallBS
    TextComponent recall_txtBS
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Recall
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    TextboxComponent textboxBS
      bold = False
      editable = True
      letterHeight = 0.1
      size = (None, None)
      startVal [time (s)] = 0.0
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    ImageComponent cont_buttonBS
      image = continue.png
      pos = (0, -.4)
      size = (0.3, 0.07)
      startVal [time (s)] = 0.0
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    CodeComponent code_3BS
      Code Type = Auto->JS
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      End Routine:
        digitsForTrial.reverse(); # reverse order for backward span

        for r in range(len(digitsForTrial)):
            digitsForTrial[r] = str(digitsForTrial[r])

        digitsForTrial = ''.join(digitsForTrial)

        if textboxBS.text == str(digitsForTrial):
            correct = 1
            fbTxt = 'Correct!'
        else:
            correct = 0
            fbTxt = 'Incorrect'
        thisExp.addData('correct', correct)
    MouseComponent mouseBS
      clickable = cont_button
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent JScode_BS
      Code Type = JS
      Begin JS Routine:
        // this is a temporary fix to allow editable textbox to be used on several trials
        textbox.refresh()
  Routine FeedbackBS
    TextComponent feedback_textBS
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $fbTxt
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  Routine instructionsBS
    TextComponent BSGenInsText
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        You are about to begin the backwards section of this task.

        You will start with a list of 2 numbers. If you are able to correctly recall two out of three lists you will proceed to longer list trials.

        Type out your answer when "Recall" screen appears using the numbers at the top of the keyboard making sure to type out the answers in the REVERSE order than they are presented on the screen. For example if you see 3,2,1 you should answer 1,2,3.

        If you make a mistake you can use backspace to correct it. Do not use spaces. Feedback will be provided.

        Click the continue button to begin a few practice trials.
    MouseComponent BSMouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 5
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    ImageComponent cont_buttonBSIns
      image = continue.png
      pos = (0, -.4)
      size = (0.3, 0.07)
      startVal [time (s)] = 5
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  Routine rdmToSpanTransition
    TextComponent breaktxt
      disabled = True
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = You have sucessfully completed the first task in this experiment! Please take a breif break for about 30 seconds. When you are ready click the continue button to move onto the second task.
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    MouseComponent BreakEndMouse
      disabled = True
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 30
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    ImageComponent cont_buttonBreak
      disabled = True
      image = continue.png
      pos = (0, -.4)
      size = (0.3, 0.07)
      startVal [time (s)] = 30
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  Routine spanGeneralInstructions
    TextComponent GenInsText
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        In this task you will be asked to memorize a series of numbers and recall them. You will do this twice, once recalling the numbers as they are presented on the screen and once recalling the numbers in the reverse order presented on the screen.

        There are 14 trials in each direction for a total of 28 trials. Click the continue button when you are ready.
    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0
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    ImageComponent cont_buttonGEN
      image = continue.png
      pos = (0, -.4)
      size = (0.3, 0.07)
      startVal [time (s)] = 0
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  Routine FSinstructions
    TextComponent FSGenInsText
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        You are about to begin the forwards section of this task.

        You will start with a list of 3 numbers. If you are able to correctly recall two out of three lists you will proceed to longer list trials.

        Type out your answer when "Recall" screen appears using the numbers at the top of the keyboard to type out the numbers in the order they were presented on the screen.

        If you make a mistake you can use backspace to correct it.  Do not use spaces. Feedback will be provided.

        Click the continue button to begin a few practice trials.
    MouseComponent FSMouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0
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    ImageComponent cont_buttonFSIns
      image = continue.png
      pos = (0, -.4)
      size = (0.3, 0.07)
      startVal [time (s)] = 0
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  Routine BSinstructions
  Routine FSPractice
  Routine End
    TextComponent ThankYou
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Thank you! You have sucessfully completed the second portion of this experiment.

        You will now be automatically redirected to Qualtrics to take a breif end of task survey.
  Routine showNumbersPractice
    TextComponent fixation_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent pres_text_practice
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text [set every repeat] = $str(digits)[digitLoopPractice.thisN]
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  Routine recallPractice
    TextComponent recall_txtPractice
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Recall
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    TextboxComponent textboxPractice
      bold = False
      editable = True
      letterHeight = 0.1
      size = (None, None)
      startVal [time (s)] = 0.0
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    ImageComponent cont_buttonPractice
      image = continue.png
      pos = (0, -.4)
      size = (0.3, 0.07)
      startVal [time (s)] = 0.0
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    CodeComponent code_3practice
      Code Type = Auto->JS
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      End Routine:
        #for r in range(len(digitsForTrial)):
        #    digitsForTrial[r] = str(digitsForTrial[r])

        #digitsForTrial = ''.join(digitsForTrial)

        if textboxPractice.text == str(digits):
            correct = 1
            fbTxt = 'Correct!'
        else:
            correct = 0
            fbTxt = 'Incorrect'
        thisExp.addData('correct', correct)
    MouseComponent mousePractice
      clickable = cont_button
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent JScodePractice
      Code Type = JS
      Begin JS Routine:
        // this is a temporary fix to allow editable textbox to be used on several trials
        textboxPractice.refresh()
  Routine feedbackPractice
    TextComponent feedbac_textPractice
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $fbTxt
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  Routine showNumbersPracticeBS
  Routine showNumbersPracticeBS_2
    TextComponent fixation_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent pres_text_practice_2
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text [set every repeat] = $str(digits)[digitLoopPracticeBS.thisN]
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  Routine recallPracticeBS
    TextComponent recall_txtPractice_2
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Recall
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    TextboxComponent textboxPractice_2
      bold = False
      editable = True
      letterHeight = 0.1
      size = (None, None)
      startVal [time (s)] = 0.0
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    ImageComponent cont_buttonPractice_2
      image = continue.png
      pos = (0, -.4)
      size = (0.3, 0.07)
      startVal [time (s)] = 0.0
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    CodeComponent code_3practice_2
      Code Type = Auto->JS
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      End Routine:
        #for r in range(len(digitsForTrial)):
        #    digitsForTrial[r] = str(digitsForTrial[r])

        #digitsForTrial = ''.join(digitsForTrial)


        if textboxPractice_2.text == str(digitsReverse):
            correct = 1
            fbTxt = 'Correct!'
        else:
            correct = 0
            fbTxt = 'Incorrect'
        thisExp.addData('correct', correct)
    MouseComponent mousePractice_2
      clickable = cont_button
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent JScodePractice_2
      Code Type = JS
      Begin JS Routine:
        // this is a temporary fix to allow editable textbox to be used on several trials
        textboxPractice_2.refresh()
  Routine feedbackPracticeBS
    TextComponent feedbac_textPractice_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $fbTxt
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  Routine startRealFS
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = start FS
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  Routine startRealBS
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = start real BS
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Flow
  Routine rdmToSpanTransition
  Routine spanGeneralInstructions
  Routine FSinstructions
  LoopInitiator trialFSpractice loopType="TrialHandler"
    conditionsFile = digitSpanPractice.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'digitSpan': 3, 'digits': 342, 'digitsReverse': 243},
      {'digitSpan': 3, 'digits': 937, 'digitsReverse': 739}]
    LoopInitiator digitLoopPractice loopType="TrialHandler"
      loopType = random
      nReps = digitSpan
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      Routine showNumbersPractice
    LoopTerminator digitLoopPractice
    Routine recallPractice
    Routine feedbackPractice
  LoopTerminator trialFSpractice
  Routine startRealFS
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:1
    conditionsFile = digitSpanTrialNumber.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'trialNumber': 1},
      {'trialNumber': 2},
      {'trialNumber': 3},
      {'trialNumber': 4},
      {'trialNumber': 5},
      {'trialNumber': 6},
      {'trialNumber': 7},
      {'trialNumber': 8},
      {'trialNumber': 9},
      {'trialNumber': 10},
      {'trialNumber': 11},
      {'trialNumber': 12},
      {'trialNumber': 13},
      {'trialNumber': 14}]
    Routine selectNumbers
    LoopInitiator digitLoop loopType="TrialHandler"
      loopType = random
      nReps = digitSpan
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      Routine showNumbers
    LoopTerminator digitLoop
    Routine Recall
    Routine Feedback
  LoopTerminator trials
  Routine instructionsBS
  LoopInitiator trialsPracticeBS loopType="TrialHandler"
    conditionsFile = digitSpanPractice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'digitSpan': 3, 'digits': 342, 'digitsReverse': 243},
      {'digitSpan': 3, 'digits': 937, 'digitsReverse': 739}]
    LoopInitiator digitLoopPracticeBS loopType="TrialHandler"
      loopType = random
      nReps = digitSpan
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      Routine showNumbersPracticeBS_2
    LoopTerminator digitLoopPracticeBS
    Routine recallPracticeBS
    Routine feedbackPracticeBS
  LoopTerminator trialsPracticeBS
  Routine startRealBS
  LoopInitiator trialsBS loopType="TrialHandler"
    Selected rows = 0:1
    conditionsFile = digitSpanTrialNumber.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'trialNumber': 1},
      {'trialNumber': 2},
      {'trialNumber': 3},
      {'trialNumber': 4},
      {'trialNumber': 5},
      {'trialNumber': 6},
      {'trialNumber': 7},
      {'trialNumber': 8},
      {'trialNumber': 9},
      {'trialNumber': 10},
      {'trialNumber': 11},
      {'trialNumber': 12},
      {'trialNumber': 13},
      {'trialNumber': 14}]
    Routine selectNumbersBS
    LoopInitiator digitLoopBS loopType="TrialHandler"
      loopType = sequential
      nReps = digitSpan
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      Routine showNumbersBS
    LoopTerminator digitLoopBS
    Routine RecallBS
    Routine FeedbackBS
  LoopTerminator trialsBS
  Routine End
