PsychoPy2experiment version="2022.2.1"
Settings
  Experiment info = {'participant': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1024, 576]
  color = -1.0000, -1.0000, -1.0000
  expName = saveVariableTesting
  keyboardBackend = ioHub
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Routines
  Routine isi
    TextComponent ISI
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = +
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  Routine showCircle
    PolygonComponent circle1
      fillColor = white
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent getResponse
      allowedKeys = 'v','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine getVariable
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        tmpVar1 = riskygain_values[0];
        tmpVar2 = riskyloss_values[0];
        tmpVar3 = choices[0]
        tmpVar4 = certain_values[1]

        msg = str(tmpVar1) + " " + str(tmpVar2) + " " + str(tmpVar3) + " " + str(tmpVar4)
    TextComponent showMsg
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
      text [set every frame] = $msg
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  Routine saveVariables
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        riskygain_values = [];
        riskyloss_values = [];
        certain_values = [];
        choices = [];
      End Routine:
        riskygain_values.append(riskyoption1)
        riskyloss_values.append(riskyoption2)
        certain_values.append(safeoption)
        if getResponse.keys == 'v':
            choices.append(1)
        elif getResponse.keys =='n':
            choices.append(0)
  Routine computeEstimates
    CodeComponent computeRhoMu
      Code Type = Auto->JS
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      Begin Experiment:
        import math

        ### Function Definitions

        def choice_probability(parameters, riskyGv, riskyLv, certv):
            # Pull out parameters
            rho = parameters[0];
            mu = parameters[1];

            nTrials = len(riskyGv);

            # Calculate utility of the two options
            utility_riskygain_value = [math.pow(value, rho) for value in riskyGv];
            utility_riskyloss_value = [math.pow(value, rho) for value in riskyLv];
            utility_risky_option = [.5 * utility_riskygain_value[t] + .5 * utility_riskyloss_value[t] for t in range(nTrials)];
            utility_safe_option = [math.pow(value, rho) for value in certv]

            # Normalize values with div
            div = max(riskyGv)**rho;

            # Softmax
            p = [1/(1 + math.exp(-mu/div*(utility_risky_option[t] - utility_safe_option[t]))) for t in range(nTrials)];
            return p

        def negLLprospect_cgt(parameters, riskyGv, riskyLv, certv, choices):
            choiceP = choice_probability(parameters, riskyGv, riskyLv, certv);

            nTrials = len(choiceP);

            likelihood = [choices[t]*choiceP[t] + (1-choices[t])*(1-choiceP[t]) for t in range(nTrials)];
            zeroindex = [likelihood[t] == 0 for t in range(nTrials)];
            for ind in range(nTrials):
                if zeroindex[ind]:
                    likelihood[ind] = 0.000000000000001;

            loglikelihood = [math.log(likelihood[t]) for t in range(nTrials)];

            nll = -sum(loglikelihood);
            return nll

        fname =[];
      Begin Routine:
        ### Grid Search Code

        # Prepare rho & mu values
        n_rho_values = 200;
        n_mu_values = 201;

        rmin = 0.3
        rmax = 2.2
        rstep = (rmax - rmin)/(n_rho_values-1)

        mmin = 7
        mmax = 80
        mstep = (mmax - mmin)/(n_mu_values-1)

        rho_values = [];
        mu_values = [];

        for r in range(n_rho_values):
            rho_values += [rmin + r*rstep];

        for m in range(n_mu_values):
            mu_values += [mmin + m*mstep];

        # Execute the grid search
        best_nll_value = 1e10; # a preposterously bad first NLL

        for r in range(n_rho_values):
            for m in range(n_mu_values):
                nll_new = negLLprospect_cgt([rho_values[r], mu_values[m]], riskygain_values, riskyloss_values, certain_values, choices);
                if nll_new < best_nll_value:
                    best_nll_value = nll_new;
                    bestR = r + 1; # "+1" corrects for diff. in python vs. R indexing
                    bestM = m + 1; # "+1" corrects for diff. in python vs. R indexing

        print('The best R index is', bestR, 'while the best M index is', bestM, ', with an NLL of', best_nll_value);

        fname.append("../choiceset/bespoke_choicesets/bespoke_choiceset_rhoInd%03i_muInd%03i.csv" % (bestR, bestM))
    TextComponent showFileNAme
      letterHeight = 0.05
      startEstim = 2
      stopVal [duration (s)] = 1.0
      text [set every frame] = $fname
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    VariableComponent choiceSetPart1
      saveStartRoutine = True
      startRoutineValue = fname[0]
      startVal [time (s)] = 2
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  Routine showFname
  Routine task2
Flow
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:6
    conditionsFile = CGT-choice-set.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('riskyoption1', 20.03), ('riskyoption2', 0.0), ('safeoption', 1.99), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 28.21), ('riskyoption2', 0.0), ('safeoption', 3.89), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 17.73), ('riskyoption2', 0.0), ('safeoption', 3.13), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 25.2), ('riskyoption2', 0.0), ('safeoption', 5.4), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 16.0), ('riskyoption2', 0.0), ('safeoption', 4.0), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 22.97), ('riskyoption2', 0.0), ('safeoption', 6.51), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 14.72), ('riskyoption2', 0.0), ('safeoption', 4.64), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 21.32), ('riskyoption2', 0.0), ('safeoption', 7.34), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 13.94), ('riskyoption2', 0.0), ('safeoption', 5.03), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 20.53), ('riskyoption2', 0.0), ('safeoption', 7.73), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 13.45), ('riskyoption2', 0.0), ('safeoption', 5.27), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 19.86), ('riskyoption2', 0.0), ('safeoption', 8.07), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 13.04), ('riskyoption2', 0.0), ('safeoption', 5.48), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 19.28), ('riskyoption2', 0.0), ('safeoption', 8.36), ('ischecktrial', 0)])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
    Routine showCircle
    Routine isi
    Routine saveVariables
  LoopTerminator trials
  Routine getVariable
  Routine computeEstimates
  LoopInitiator task2_trials loopType="TrialHandler"
    Selected rows = 0:3
    conditionsFile = $fname[0]
    loopType = random
    nReps = 1
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    Routine task2
    Routine showCircle
    Routine isi
  LoopTerminator task2_trials
